PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/sub-%s_%s_s%s_r%s_e1' % (expInfo['id'], expName, expInfo['session'], expInfo['run'])
  Experiment info = {'id': '', 'hand': "['L', 'R']", 'session': '1', 'run': '1', 'event': '1'}
  Full-screen window = True
  Monitor = macbook-pro-13
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -0.3000, -0.3000, -0.3000
  expName = letter-flanker
  keyboardBackend = ioHub
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Routines
  Routine JS_code
    CodeComponent JScode
      Code Type = JS
      disabled = True
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine setup
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        #import serial #used for sending eeg triggers
        #import time #indirerctly used for sending eeg triggers (how long to wait before clearing port)

        #win.mouseVisible = False #hide mouse cursor
        #port = serial.Serial('COM3') # Open specified serial port (COM4) for sending eeg triggers to
        #PulseWidth = 0.002 #how long to wait before clearing port after sending trigger (2 ms is sufficient at 1000 hz sampling rate)
        #port.write([0x00]) #clear serial port
        #time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
      Begin Routine:
        win.mouseVisible = False #hide mouse cursor
      End Experiment:
        win.mouseVisible = True #make the mouse cursor visable again
        #port.write([0xFF]) #set port values back to default state (FF)
        #time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
        #port.close() #close port opened at start of exp
    CodeComponent config_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        ## whether we want letters from WM and flanker could be same
        #if expInfo["repeat"] == "No":
        #    repeat_letters = False
        #if expInfo["repeat"] == "Yes":
        #    repeat_letters = True
        # whether we want letters inside flanker could be same
        #repeat_letters_fl = False

        used_letters = [] # letters used in WM and flanker trials (to prevent repeates in WM and flanker within supertrial)
        used_letters_fl = [] # letters used in flanker trials (to prevent repeats within flanker trials)
        shown_letters = [] # exact letters shown in WM (i.e., considered lower-/uppercase)

        CROSS_Y = -0.73 # position of fix cross (to easily adjust when switch from macbook to asus), for asus should be -0.71

        # initialize thresholds for flanker and WM practice
        #WM_THRESH = 0.7
        FL_THRESH = 0.7

        # initialize trial, block counters and accuracy
        numCorr_wm = 0
        trialNum_wm = 0
        numCorr_fl = 0
        trialNum_fl = 0
        blockCounter = 0
        trialNum = 0
        accuracy = 0
        numCorr = 0
        blockAcc_wm = 0
        blockAcc_fl = 0

        # initialize the thisISI variable used for all ISI
        thisISI = 0

        # consontant capital letters without Y and L
        # (because lowercase l looks like capitalized i)
        WM_LETTERS = ['B', 'C', 'D',
        'F', 'G', 'H',
        'J', 'K', #'L',
        'M', 'N', 'P',
        'Q', 'R', 'S',
        'T', 'V', 'W',
        'X', 'Z']

        # initialize reminders for flanker trials
        if expInfo["hand"] == "L":
            left_reminder = "Left button\nCAPITALIZED"
            right_reminder = "Right button\nlowercase"
        elif expInfo["hand"] == "R":
            left_reminder = "Left button\nlowercase"
            right_reminder = "Right button\nCAPITALIZED"
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
  Routine instructMiddle
    TextComponent welcome_text_2_L
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "L"
      units = height
      wrapWidth = 1.3
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      text [set every repeat]:
        Welcome to the BiG Letters Game! This game will require you to quickly respond to letters based on whether they are CAPITALIZED or lowercase.

        During this game, five letters will appear at a time. They will be quickly flashed on the screen. Your goal is to respond to the MIDDLE letter, and to respond as quickly as you can without making mistakes.

        If the MIDDLE letter is lowercase, use your right hand to press the right button. If the MIDDLE letter is CAPITALIZED, use your left hand to press the left button.

        Press the right button to continue
    TextComponent welcome_text_2_R
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "R"
      wrapWidth = 1.3
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      text [set every repeat]:
        Welcome to the BiG Letters Game! This game will require you to quickly respond to letters based on whether they are CAPITALIZED or lowercase.

        During this game, five letters will appear at a time. They will be quickly flashed on the screen. Your goal is to respond to the MIDDLE letter, and to respond as quickly as you can without making mistakes.

        If the MIDDLE letter is lowercase, use your left hand to press the left button. If the MIDDLE letter is CAPITALIZED, use your right hand to press the right button.

        Press the right button to continue
    KeyboardComponent space_end_keyResp_7
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine respond_onceInstruct
    TextComponent respond_once_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Each time you see the letters appear, respond as quickly as you can without making mistakes.

        However, only respond once each time you see the letters appear. Even if you think you made the wrong response, do not respond again until you see the next set of letters appear. Also, please do not to say the letters out loud.

        Press the right button to continue
    KeyboardComponent space_end_keyResp_8
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent left_reminder_text_2
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_2
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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  Routine eeg_trigger_check
    CodeComponent triggerCheck_code
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        #initialize usb connected variable
        usbConnected = 1
      Begin Routine:
        #(re)open trigger port. This is done in case the connection failed,
        #in which case triggers will no longer be sent until the port is reopened.

        #At start of routine, we try to close/open the port. This will usually be
        #succesful, causing us to end the routine altogether. However, it will fail if
        #the usb is unplugged. In this latter case, the routine will then run code each
        #frame to constantly check for the usb being plugged back in, before continuing.

        try:
        #if usb connected, port will close/open and routine will end
            port.close()
            port.open()
            usbConnected = 1 #if successful, set usbConnectd to 1
            continueRoutine = False #if successful, end the routine

        except: #if port close/open fails, then set usbConnected to 0. Routine will loop each frame until fixed.
            usbConnected = 0 #if failure, set usbConnected to 0
      Each Frame:
        #if the usb is not connected, then keep trying to open port to determine when it has been reconnected.
        if usbConnected == 0:

            try:
                #if usb connected, port will close/open and routine will end
                port.close()
                port.open()
                usbConnected = 1 #if successful, set usbConnectd to 1
                #send trigger to indicate that there was a connection issue that is now resolved
                port.write([0x63]) #hexcode = 99; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
                #if successful, end the routine
                continueRoutine = False

            except: #if usb not connected, routine will continue (keep checking port and keep showing message)
                usbConnected = 0 #if failure, set usbConnectd to 0
                time.sleep(0.5) #wait .5 secs before checking again, to not overload the system
    TextComponent triggerIssue_text
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = EEG EQUIPMENT ISSUE: please ring bell for experimenter
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  Routine prac_blockReminders
    TextComponent prac_blockText
      letterHeight = 0.06
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent prac_reminder_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Respond as quickly as you can without making mistakes. Only respond once each time you see the letters appear. Always respond whether the MIDDLE letter is CAPITALIZED or lowercase.

        Remember not to say any of the letters out loud. To get ready, rest your thumbs on the right and left buttons.


        Experimenter: press key to continue
    TextComponent left_reminder_text
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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    KeyboardComponent space_end_keyResp_9
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_initFixation
    CodeComponent prac_endTask_code
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(2600, 3000, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # empty lists of used letters
        used_letters = []
        shown_letters = []
    ImageComponent initFixation_img_2
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = thisISI
      texture resolution = 512
      units = deg
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    TextComponent left_reminder_text_3
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_3
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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  Routine prac_stimRoutine
    CodeComponent prac_flanker_letters_code
      Code Type = Auto->JS
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      Begin Routine:
        # leave only not-used letters for flanker
        #if repeat_letters == True:
        #    flanker_letters = \
        #    [i for i in WM_LETTERS]
        #elif repeat_letters == False:
        #    flanker_letters = \
        #    [i for i in WM_LETTERS\
        #    if i not in used_letters]

        flanker_letters = [i for i in WM_LETTERS]

        # if there is an L, we don't want in in flanker
        if "L" in flanker_letters:
            flanker_letters.remove("L")

        # shuffle again
        shuffle(flanker_letters)

        # take flanker letter and add to used flanker letters
        flanker_stim = flanker_letters[0]

        # create flanker stimuli based on the congruency and case
        if congruent == 1 and target == "uppercase":
            flanker_stim = "{}".format(flanker_stim*5)
        elif congruent == 1 and target == "lowercase":
            flanker_stim = "{}".format(flanker_stim.lower()*5)
        elif congruent == 0 and target == "uppercase":
            flanker_stim = "{}{}{}".format(flanker_stim.lower()*2,
            flanker_stim, flanker_stim.lower()*2)
        elif congruent == 0 and target == "lowercase":
            flanker_stim = "{}{}{}".format(flanker_stim*2,
            flanker_stim.lower(), flanker_stim*2)
        else: flanker_stim = "error"
      End Routine:
        # write flanker stimuli to data
        prac_trial_loop.addData('prac_flanker_stim',
        flanker_stim)
    CodeComponent prac_isi_code
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1300, 1800, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        prac_trial_loop.addData('prac_flanker_ISI', thisISI)

        # show in console for debugging
        #print('thisISI: ', thisISI)
    TextComponent prac_flanker_text_stim
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $flanker_stim
      units = deg
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    ImageComponent prac_fixImg
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      saveStartStop = False
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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    TextComponent left_reminder_text_4
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_4
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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    KeyboardComponent prac_stim_keyResp
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent prac_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if expInfo["hand"] == "L":
            if prac_stim_keyResp.keys: #if at least one response was made this trial
                if prac_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                    if target == 'uppercase': #if a left target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                    elif target == 'lowercase': #if a right target stim was shown this trial
                        accuracy = 0 #mark this trial as an error
                elif prac_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                    if target == 'lowercase': #if a right target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                    elif target == 'uppercase': #if a left target stim was shown this trial
                        accuracy = 0 #mark this trial as an error

            elif not prac_stim_keyResp.keys: # if no response was made
                accuracy = 0

        elif expInfo["hand"] == "R":
            if prac_stim_keyResp.keys: #if at least one response was made this trial
                if prac_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                    if target == 'lowercase': #if a left target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                    elif target == 'uppercase': #if a right target stim was shown this trial
                        accuracy = 0 #mark this trial as an error
                elif prac_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                    if target == 'uppercase': #if a right target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                    elif target == 'lowercase': #if a left target stim was shown this trial
                        accuracy = 0 #mark this trial as an error

            elif not prac_stim_keyResp.keys: # if no response was made
                accuracy = 0

        # save this trial's accuracy to our output file
        prac_trial_loop.addData('prac_flanker_accuracy', accuracy)
    CodeComponent prac_stimTrigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if prac_centerImg.status == STARTED and not stimTriggerSent:
            if stimNum == 1: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x01]) #hexcode = 1; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 2:
                stimTriggerSent = True
                port.write([0x02])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 3:
                stimTriggerSent = True
                port.write([0x03])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 4:
                stimTriggerSent = True
                port.write([0x04])
                time.sleep(PulseWidth)
                port.write([0x00])
    CodeComponent prac_respTrigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if prac_stim_keyResp.keys and len(prac_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(prac_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial (-1 is the last position)
            if len(prac_stim_keyResp.keys) < 2: #if this is  the first response
                if prac_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif prac_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(prac_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if prac_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif prac_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
  Routine prac_blockFeed
    CodeComponent prac_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum # compute accuracy for this block

        if blockAcc >= FL_THRESH: # if accuracy >= threshold then say practice is complete and end practice loop to continue to main exp
            outPut = 'Well done! Now you are ready to play the real game!' #feedback presented
            prac_block_loop.finished = True #end practice loop to continue to main exp
        elif blockAcc <= FL_THRESH: # if accuracy < threshold then say that practice needs to be repeated and DO NOT end practice loop, instead, allow it to repeat
            outPut = 'Please try the practice again' #feedback presented
            prac_block_loop.finished = False #DO NOT end practice loop and allow to repeat

        prac_block_loop.addData('prac_flanker_blockAcc', blockAcc)

        # reset the following variables to zero before the next practice block starts
        trialNum = 0
        numCorr = 0
      End Routine:
        if prac_blockFeed_keyResp.keys[-1] == 's':
            prac_block_loop.finished = True #end practice loop to continue to main exp
    TextComponent prac_blockFeed_text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 1.3
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    TextComponent prac_pressContinue_3
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experimenter: press key to continue
      wrapWidth = 1.3
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    KeyboardComponent prac_blockFeed_keyResp
      allowedKeys = 'c','s'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine task_condition
    CodeComponent task_blockReminder_code_2
      Code Type = Auto->JS
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      Begin Routine:
        #if endCondition: # skip all trials for this condition; participant will not play game.
        #    task_block_loop.finished = True
        #    continueRoutine = False

        blockCounter = blockCounter +1

        if blockCounter == 1:
            blockNumText = 'Block 1 of 6'
        elif blockCounter == 2:
            blockNumText = 'Block 2 of 6'
        elif blockCounter == 3:
            blockNumText = 'Block 3 of 6'
        elif blockCounter == 4:
            blockNumText = 'Block 4 of 6'
        elif blockCounter == 5:
            blockNumText = 'Block 5 of 6'
        elif blockCounter == 6:
            blockNumText = 'Block 6 of 6'
    TextComponent task_blockText_2
      letterHeight = 0.06
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNumText
      wrapWidth = 1.3
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    TextComponent condition_reminder_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Respond as quickly as you can without making mistakes. Only respond once each time you see the letters appear in the BiG Letters Game. Even if you think you made the wrong response, do not respond again until you see the next set of letters appear.

        Always respond whether the MIDDLE letter is CAPITALIZED or lowercase.

        Remember not to say any of the letters out loud. To get ready, rest your thumbs on the right and left buttons.

        Press the right button to begin
    KeyboardComponent space_end_keyResp_11
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine supertrial_initFixation
    CodeComponent endTask_code_4
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(2600, 3000, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        task_condition_loop.addData('ISI_fixation', thisISI)

        #if endCondition: # skip all trials for this condition; participant will not play game.
        #    task_block_loop.finished = True
        #    continueRoutine = False
    ImageComponent initFixation_img_5
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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    TextComponent left_reminder_text_11
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_11
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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  Routine task_stimRoutine
    CodeComponent flanker_letters_code
      Code Type = Auto->JS
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      Begin Routine:
        flanker_letters = [i for i in WM_LETTERS]

        # if there is an L, we don't want in in flanker
        if "L" in flanker_letters:
            flanker_letters.remove("L")

        # shuffle again
        shuffle(flanker_letters)

        # take flanker letter and add to used flanker letters
        flanker_stim = flanker_letters[0]
        used_letters_fl.append(flanker_stim)

        # create flanker stimuli based on the congruency and case
        if congruent == 1 and target == "uppercase":
            flanker_stim = "{}".format(flanker_stim*5)
        elif congruent == 1 and target == "lowercase":
            flanker_stim = "{}".format(flanker_stim.lower()*5)
        elif congruent == 0 and target == "uppercase":
            flanker_stim = "{}{}{}".format(flanker_stim.lower()*2,
            flanker_stim, flanker_stim.lower()*2)
        elif congruent == 0 and target == "lowercase":
            flanker_stim = "{}{}{}".format(flanker_stim*2,
            flanker_stim.lower(), flanker_stim*2)
        else: flanker_stim = "error"
      End Routine:
        # write flanker stimuli to data
        task_trial_loop.addData('flanker_stim',
        flanker_stim)
    CodeComponent task_isi_code
      Code Type = Both
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1300, 1800, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        task_trial_loop.addData('ISI', thisISI)
    TextComponent flanker_text_stim
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $flanker_stim
      units = deg
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    TextComponent left_reminder_text_8
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_8
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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    ImageComponent task_fixImg
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      saveStartStop = False
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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    KeyboardComponent task_stim_keyResp
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent task_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        #iterate trial number for this block
        trialNum = trialNum + 1

        if expInfo["hand"] == "L":
            if task_stim_keyResp.keys: #if at least one response was made this trial
                if task_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                    if target == 'uppercase': #if a left target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this block
                    elif target == 'lowercase': #if a right target stim was shown this trial
                        accuracy = 0 #mark this trial as an error
                elif task_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                    if target == 'lowercase': #if a right target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this block
                    elif target == 'uppercase': #if a left target stim was shown this trial
                        accuracy = 0 #mark this trial as an error

            elif not task_stim_keyResp.keys: # if no response was made
                accuracy = 0

        elif expInfo["hand"] == "R":
            if task_stim_keyResp.keys: #if at least one response was made this trial
                if task_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                    if target == 'lowercase': #if a left target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this block
                    elif target == 'uppercase': #if a right target stim was shown this trial
                        accuracy = 0 #mark this trial as an error
                elif task_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                    if target == 'uppercase': #if a right target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this block
                    elif target == 'lowercase': #if a left target stim was shown this trial
                        accuracy = 0 #mark this trial as an error

            elif not task_stim_keyResp.keys: # if no response was made
                accuracy = 0

        # save this trial's accuracy to our output file
        task_trial_loop.addData('fl_accuracy', accuracy)
    CodeComponent task_stimTrigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if task_centerImg.status == STARTED and not stimTriggerSent:
            if stimNum == 41: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x29]) #hexcode = 41; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 42:
                stimTriggerSent = True
                port.write([0x2A])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 43:
                stimTriggerSent = True
                port.write([0x2B])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 44:
                stimTriggerSent = True
                port.write([0x2C])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 51: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x33]) #hexcode = 51; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 52:
                stimTriggerSent = True
                port.write([0x34])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 53:
                stimTriggerSent = True
                port.write([0x35])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 54:
                stimTriggerSent = True
                port.write([0x36])
                time.sleep(PulseWidth)
                port.write([0x00])
    CodeComponent task_respTrigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if task_stim_keyResp.keys and len(task_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(task_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial
            if len(task_stim_keyResp.keys) < 2: #if this is  the first response
                if task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(task_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
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  Routine task_conditionComplete
    CodeComponent stimTask_code_4
      Code Type = Auto->JS
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      End Routine:
        # save this trial's flanker accuracy to our output file
        fl_accuracy = numCorr / trialNum
        task_condition_loop.addData('block_accuracy', fl_accuracy)

        # reset
        trialNum = 0
        numCorr = 0
    TextComponent conditionComplete_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Press the right button to continue
      wrapWidth = 1.3
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    KeyboardComponent space_end_keyResp_13
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_finish
    TextComponent taskComplete_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Thank you for participating!

        Please ring the bell for your experimenter.
    KeyboardComponent space_end_keyResp_12
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine instructRight
    TextComponent instructRight_text_2_L
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "L"
      wrapWidth = 1.3
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      text [set every repeat]:
        Below, the MIDDLE letter is lowercase, so you would respond by pressing the right button with your right hand.







        Press the right button to continue
    TextComponent instructRight_text_2_R
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "R"
      wrapWidth = 1.3
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      text [set every repeat]:
        Below, the MIDDLE letter is lowercase, so you would respond by pressing the left button with your left hand.







        Press the left button to continue
    TextComponent instructRight_letters2
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = hhhhh
      units = deg
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    PolygonComponent prac_highlight_circle_2
      fillColor = yellow
      lineColor = yellow
      lineWidth = 5
      opacity = 0.3
      shape = circle
      size = (0.05, 0.045)
      startVal [time (s)] = 0.0
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    KeyboardComponent insructRight_keyResp_2_L
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "L"
      store = nothing
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    KeyboardComponent insructRight_keyResp_2_R
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "R"
      store = nothing
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  Routine instructLeft
    TextComponent instructLeft_text_2_L
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "L"
      wrapWidth = 1.3
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      text [set every repeat]:
        Below, the MIDDLE letter is CAPITALIZED, so you would respond by pressing the left button with your left hand.







        Press the left button to continue
    TextComponent instructLeft_text_2_R
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "R"
      wrapWidth = 1.3
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      text [set every repeat]:
        Below, the MIDDLE letter is CAPITALIZED, so you would respond by pressing the right button with your right hand.







        Press the right button to continue
    TextComponent instructLeft_letters2
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = MMMMM
      units = deg
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    PolygonComponent prac_highlight_circle_4
      fillColor = yellow
      lineColor = yellow
      lineWidth = 5
      opacity = 0.3
      shape = circle
      size = (0.05, 0.045)
      startVal [time (s)] = 0.0
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    KeyboardComponent instructLeft_keyResp_2_L
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "L"
      store = nothing
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    KeyboardComponent instructLeft_keyResp_2_R
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "R"
      store = nothing
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  Routine instructInconRight
    TextComponent instructInconRight_text_2_L
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "L"
      wrapWidth = 1.3
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      text [set every repeat]:
        Sometimes the MIDDLE letter will have a different case from the other letters. However, your goal is to always respond to the MIDDLE letter.

        Below, the MIDDLE letter is lowercase, so you would respond by pressing the right button with your right hand.





        Press the right button to continue
    TextComponent instructInconRight_text_2_R
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "R"
      wrapWidth = 1.3
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      text [set every repeat]:
        Sometimes the MIDDLE letter will have a different case from the other letters. However, your goal is to always respond to the MIDDLE letter.

        Below, the MIDDLE letter is lowercase, so you would respond by pressing the left button with your left hand.





        Press the left button to continue
    TextComponent instructionRight_letters2
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = FFfFF
      units = deg
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    PolygonComponent prac_highlight_circle_6
      fillColor = yellow
      lineColor = yellow
      lineWidth = 5
      opacity = 0.3
      shape = circle
      size = (0.05, 0.045)
      startVal [time (s)] = 0.0
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    KeyboardComponent insructInconRight_keyResp_2_L
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "L"
      store = nothing
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    KeyboardComponent insructInconRight_keyResp_2_R
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "R"
      store = nothing
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  Routine instructInconLeft
    TextComponent instructInconLeft_text_2_L
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "L"
      wrapWidth = 1.3
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      text [set every repeat]:
        Below, the MIDDLE letter is CAPITALIZED, so you would respond by pressing the left button with your left hand.







        Press the left button to continue
    TextComponent instructInconLeft_text_2_R
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "R"
      wrapWidth = 1.3
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      text [set every repeat]:
        Below, the MIDDLE letter is CAPITALIZED, so you would respond by pressing the right button with your right hand.







        Press the right button to continue
    TextComponent instructInconLeft_letters2
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = ttTtt
      units = deg
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    PolygonComponent prac_highlight_circle_8
      fillColor = yellow
      lineColor = yellow
      lineWidth = 5
      opacity = 0.3
      shape = circle
      size = (0.05, 0.045)
      startVal [time (s)] = 0.0
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    KeyboardComponent instructInconLeft_keyResp_2_L
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "L"
      store = nothing
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    KeyboardComponent instructInconLeft_keyResp_2_R
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["hand"] == "R"
      store = nothing
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
Flow
  Routine JS_code
  Routine setup
  Routine instructMiddle
  Routine instructRight
  Routine instructLeft
  Routine instructInconRight
  Routine instructInconLeft
  Routine respond_onceInstruct
  LoopInitiator prac_block_loop loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine eeg_trigger_check
    Routine prac_blockReminders
    Routine prac_initFixation
    LoopInitiator prac_trial_loop loopType="TrialHandler"
      conditionsFile = prac_trials.xlsx
      loopType = fullRandom
      nReps = 10
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      Routine prac_stimRoutine
    LoopTerminator prac_trial_loop
    Routine prac_blockFeed
  LoopTerminator prac_block_loop
  LoopInitiator task_condition_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 6
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    Routine task_condition
    Routine eeg_trigger_check
    Routine supertrial_initFixation
    LoopInitiator task_trial_loop loopType="TrialHandler"
      conditionsFile = 4.xlsx
      loopType = fullRandom
      nReps = 10
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      conditions:
        [{'stimNum': 41, 'congruent': 1, 'target': 'lowercase'},
        {'stimNum': 42, 'congruent': 1, 'target': 'uppercase'},
        {'stimNum': 43, 'congruent': 0, 'target': 'lowercase'},
        {'stimNum': 44, 'congruent': 0, 'target': 'uppercase'}]
      Routine task_stimRoutine
    LoopTerminator task_trial_loop
    Routine task_conditionComplete
  LoopTerminator task_condition_loop
  Routine task_finish
