PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/sub-%s_%s_s%s_r%s_e1' % (expInfo['id'], expName, expInfo['session'], expInfo['run'])
  Experiment info = {'id': '', 'session': '1', 'run': '1', 'event': '1'}
  Full-screen window = False
  Monitor = macbook-pro-13
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -0.3000, -0.3000, -0.3000
  expName = wme-face-jitter-l
  keyboardBackend = ioHub
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Routines
  Routine JS_code
    CodeComponent JScode
      Code Type = JS
      disabled = True
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine setup
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        #import serial #used for sending eeg triggers
        #import time #indirerctly used for sending eeg triggers (how long to wait before clearing port)

        #win.mouseVisible = False #hide mouse cursor
        #port = serial.Serial('COM3') # Open specified serial port (COM4) for sending eeg triggers to
        #PulseWidth = 0.002 #how long to wait before clearing port after sending trigger (2 ms is sufficient at 1000 hz sampling rate)
        #port.write([0x00]) #clear serial port
        #time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
      Begin Routine:
        win.mouseVisible = False #hide mouse cursor
      End Experiment:
        win.mouseVisible = True #make the mouse cursor visable again
        #port.write([0xFF]) #set port values back to default state (FF)
        #time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
        #port.close() #close port opened at start of exp
    CodeComponent config_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import os

        def convert_ratio(ratio):
            if ratio == 5:
                return 1
            elif ratio == 10:
                return 2
            elif ratio == 15:
                return 3
        # jitters = [i / 1000 for i in list(range(0, 751))]
        # jitters = [i / 60 for i in list(range(0, 46))]
        jitters = ([i / 60 for i in list(range(0, 46))] * 8 + random.sample([i / 60 for i in list(range(0, 46))], 32))
        shuffle(jitters)
        prac_img_list = [i for i in os.listdir("img/prac_img/") if i.endswith("-windowed")]
        shuffle(prac_img_list)

        img_list = [i for i in os.listdir("img/") if i.endswith("-windowed")]
        shuffle(img_list)

        prime_list = [6] * 200 + [14] * 200
        shuffle(prime_list)

        prac_prime_list = [6] * 6 + [14] * 6
        shuffle(prac_prime_list)

        n_responses = 0
        prac_n_responses = 0
        back_color = "5A5A5A" # hex
        number_size = 1 # degrees
        experimenter_button = "return"
        left_button = "t"
        right_button = "y"
        skip_button = "9"
        recall_text = "Remember the first face"
        recall_delay = 1 # delay before wm response can be made
        block_delay = 10 # delay before start next block
        response_deadline = 100 # flanker response deadline
        flanker_duration = 0.2 # flanker arro duration
        instruction_start = 0 # delay before flanker instruction can be skipped
        prime_duration = 1 # prime face duration
        wm_duration = 100 # wm stimulus duration
        too_slow_duration = 0.2
        recall_duration = 4

        face_size = 6 # degrees
        CROSS_Y = -0.6/2 # position of fix cross (to easily adjust when switch from macbook to asus), for asus should be -0.71
        FL_THRESH = 0.8
        supertrial_practice = (1)
        flanker_practice = (20/4)/5
        three_ratios = [5, 10, 15]

        similarity = [5, 10, 15]
        opacity = [1, 1, 1,]

        prime_ratio = [6, 14]
        middle_ratio = 10

        x_locs = [
            -28/6, #1
            0, #2
            28/6, #3
            ]
        y_locs = [
            -2.5, #1
            2.5, #2
            -2.5, #3
            ]
        x_locs_buttons = [
            -28/6, #1
            0, #2
            28/6, #3
            ]
        y_locs_buttons = [
            0-.5, #1
            4.5, #2
            0-.5, #3
            ]

        # x_locs_buttons = [i - 0.01 for i in np.linspace(-0.6, 0.6, 6)]
        # y_locs = -0.15
        instruction_y = 0

        # initialize trial, block counters and accuracy
        blockCounter = 0
        trialNum = 0
        accuracy = 0
        numCorr = 0
        blockAcc = 0

        # initialize the thisISI variable used for all ISI
        thisISI = 0
        volume = 0.1/4
  Routine welcome
    SoundComponent sound_1
      sound = audio/welcome.wav
      startVal [time (s)] = 0.0
      volume = volume
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    TextComponent welcome_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Welcome to the Arrow Alert game. In this game, arrows will be quickly flashed on the screen. Your goal is to respond to the direction of the arrows by using the buttons L and R, and to respond as quickly as you can without making mistakes.
    TextComponent exp_press_key_1
      letterHeight = 0.05
      startVal [condition] = sound_1.status == -1
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      text:


        Experimenter: press key to continue
    KeyboardComponent space_end_keyResp
      allowedKeys = experimenter_button
      forceEndRoutine = True
      startVal [condition] = sound_1.status == -1
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  Routine respond_onceInstruct
    SoundComponent sound_6
      sound = audio/respond_onceinstruct.wav
      startVal [time (s)] = 0.0
      volume = volume
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    TextComponent respond_once_text
      letterHeight = 0.04
      pos = (0, instruction_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Each time you see the arrows appear, respond as quickly as you can without making mistakes.

        However, only respond once each time you see the arrows appear. Even if you think you made the wrong response, do not respond again until you see the next set of arrows appear.
    TextComponent exp_press_key_2
      letterHeight = 0.05
      startVal [condition] = sound_6.status == -1
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      text:



        Experimenter: press key to continue
    KeyboardComponent space_end_keyResp_8
      allowedKeys = experimenter_button
      forceEndRoutine = True
      startVal [condition] = sound_6.status == -1
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  Routine eeg_trigger_check
    CodeComponent triggerCheck_code
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        #initialize usb connected variable
        usbConnected = 1
      Begin Routine:
        #(re)open trigger port. This is done in case the connection failed,
        #in which case triggers will no longer be sent until the port is reopened.

        #At start of routine, we try to close/open the port. This will usually be
        #succesful, causing us to end the routine altogether. However, it will fail if
        #the usb is unplugged. In this latter case, the routine will then run code each
        #frame to constantly check for the usb being plugged back in, before continuing.

        try:
        #if usb connected, port will close/open and routine will end
            port.close()
            port.open()
            usbConnected = 1 #if successful, set usbConnectd to 1
            continueRoutine = False #if successful, end the routine

        except: #if port close/open fails, then set usbConnected to 0. Routine will loop each frame until fixed.
            usbConnected = 0 #if failure, set usbConnected to 0
      Each Frame:
        #if the usb is not connected, then keep trying to open port to determine when it has been reconnected.
        if usbConnected == 0:

            try:
                #if usb connected, port will close/open and routine will end
                port.close()
                port.open()
                usbConnected = 1 #if successful, set usbConnectd to 1
                #send trigger to indicate that there was a connection issue that is now resolved
                port.write([0x63]) #hexcode = 99; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
                #if successful, end the routine
                continueRoutine = False

            except: #if usb not connected, routine will continue (keep checking port and keep showing message)
                usbConnected = 0 #if failure, set usbConnectd to 0
                time.sleep(0.5) #wait .5 secs before checking again, to not overload the system
    TextComponent triggerIssue_text
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = EEG EQUIPMENT ISSUE: please ring bell for experimenter
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  Routine prac_blockReminders
    SoundComponent sound_7
      sound = audio/practice_flanker.wav
      startVal [time (s)] = 0.0
      volume = volume
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    TextComponent prac_blockText
      letterHeight = 0.06
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent prac_reminder_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Respond as quickly as you can without making mistakes. Only respond once each time you see the arrows appear.

        Always respond to the direction of the MIDDLE arrow.

        To get ready, rest your index fingers on the right and left buttons.
    TextComponent exp_press_key_3
      letterHeight = 0.05
      startVal [condition] = (sound_7.status == -1 and flanker_block_loop.thisN == 0)
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      text:


        Experimenter: press key to continue
    TextComponent exp_press_key_6
      letterHeight = 0.05
      startVal [condition] = flanker_block_loop.thisN > 0
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      text:


        Experimenter: press key to continue
    KeyboardComponent space_end_keyResp_9
      allowedKeys = experimenter_button
      forceEndRoutine = True
      startVal [condition] = (sound_7.status == -1 and flanker_block_loop.thisN == 0)
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    KeyboardComponent space_end_keyResp_16
      allowedKeys = experimenter_button
      forceEndRoutine = True
      startVal [condition] = flanker_block_loop.thisN > 0
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
  Routine instruct_SuperTrial
    SoundComponent sound_8
      sound = audio/instruct_main.wav
      startVal [time (s)] = 0.0
      volume = volume
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    TextComponent instruct_ST_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        For the rest of today, you will play two games at the same time! You will play the Arrow Alert Game, just like before. However, you will also play a Face Memory Game.

        To play both games, a face will be quickly shown on the screen before the arrows appear. You must remember this face while also correctly responding to the arrows. A second face will also be shown after you respond to the arrows. However, you only need to remember the first face (the one that appears before the arrows).

        You will then have 4 seconds to choose the first face out of 3 faces by using the buttons L, M, or R. Please note, that the correct face will appear equally often at each triangle location (L, M, and R). You should select each face position about the same number of times if you are doing the task correctly.
    TextComponent exp_press_key_4
      letterHeight = 0.05
      startVal [condition] = sound_8.status == -1
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      text:







        Experimenter: press key to continue
    KeyboardComponent space_end_keyResp_10
      allowedKeys = experimenter_button
      forceEndRoutine = True
      startVal [condition] = sound_8.status == -1
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
  Routine reminder_SuperTrial
    SoundComponent sound_9
      sound = audio/practice_main.wav
      startVal [time (s)] = 0.0
      volume = volume
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    TextComponent prac_blockText_3
      letterHeight = 0.06
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent task_blockReminders_text_2
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        You should try your best to play both games at the same time.

        For the Arrow Alert Game, you will have less than 1 second to respond to the direction of the MIDDLE arrow. For this game, always respond as quickly as you can without making mistakes. Only respond once each time you see the arrows appear.

        For the Face Memory Game, be sure to always remember the first face, which appears before the arrows. You do not need to remember the second face that appears after the arrows.

        For the Face Memory Game, you will have 4 seconds to recall the first face by using the buttons L, M, or R. For this game, it is more important to be correct than to be fast. If you try to respond too fast for the Face Memory Game, it will not continue.
    TextComponent exp_press_key_5
      letterHeight = 0.05
      startVal [condition] = (sound_9.status == -1 and pracST_block_loop.thisN == 0)
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      text:







        Experimenter: press key to continue
    TextComponent exp_press_key_7
      letterHeight = 0.05
      startVal [condition] = pracST_block_loop.thisN > 0
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      text:







        Experimenter: press key to continue
    KeyboardComponent task_blockReminders_keyResp_2
      allowedKeys [set every repeat] = experimenter_button
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = (sound_9.status == -1 and pracST_block_loop.thisN == 0)
      store = nothing
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    KeyboardComponent task_blockReminders_keyResp
      allowedKeys [set every repeat] = experimenter_button
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = pracST_block_loop.thisN > 0
      store = nothing
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  Routine pracSuperTrial_feed
    CodeComponent prac_blockFeed_code_3
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockAcc >= FL_THRESH and prac_n_responses >= 11: #if accuracy >= 75% then say practice is complete and end practice loop to continue to main exp
            outPut = 'Well done! Now you are ready to play the real game!'
            pracST_block_loop.finished = True #end practice loop to continue to main exp
        else: #if accuracy lower than threshold then say that practice needs to be repeated and DO NOT end practice loop, instead, allow it to repeat
            outPut = 'Please try the practice again.\n\nPlease, provide a response each time you asked to remember the faces and be more accurate in the Arrow Alert Game.'
            pracST_block_loop.finished = False #DO NOT end practice loop and allow to repeat

        # write block accuracy to data
        pracST_block_loop.addData('pracST_blockAcc', blockAcc)

        #reset the following variables to zero before the next practice block starts
        trialNum = 0
        numCorr = 0
        prac_n_responses = 0
      End Routine:
        if prac_blockFeed_keyResp_3.keys[-1] == "9":
            pracST_block_loop.finished = True #end practice loop to continue to main exp
    TextComponent prac_blockFeed_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 1.3
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    TextComponent prac_pressContinue
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experimenter: press key to continue
      wrapWidth = 1.3
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    KeyboardComponent prac_blockFeed_keyResp_3
      allowedKeys [set every repeat] = "return", "num_add", "9"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine task_condition
    CodeComponent task_blockReminder_code_2
      Code Type = Auto->JS
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      Begin Routine:
        #if endCondition: # skip all trials for this condition; participant will not play game.
        #    task_block_loop.finished = True
        #    continueRoutine = False

        blockCounter = blockCounter +1

        if blockCounter == 1:
            blockNumText = 'Block 1 of 10'
        elif blockCounter == 2:
            blockNumText = 'Block 2 of 10'
        elif blockCounter == 3:
            blockNumText = 'Block 3 of 10'
        elif blockCounter == 4:
            blockNumText = 'Block 4 of 10'
        elif blockCounter == 5:
            blockNumText = 'Block 5 of 10'
        elif blockCounter == 6:
            blockNumText = 'Block 6 of 10'
        elif blockCounter == 7:
            blockNumText = 'Block 7 of 10'
        elif blockCounter == 8:
            blockNumText = 'Block 8 of 10'
        elif blockCounter == 9:
            blockNumText = 'Block 9 of 10'
        elif blockCounter == 10:
            blockNumText = 'Block 10 of 10'
    TextComponent task_blockText_2
      letterHeight = 0.06
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNumText
      wrapWidth = 1.3
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    TextComponent condition_reminder_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        You should try your best to play both games at the same time.

        For the Arrow Alert Game, you will have less than 1 second to respond to the direction of the MIDDLE arrow. For this game, always respond as quickly as you can without making mistakes. Only respond once each time you see the arrows appear.

        For the Face Memory Game, be sure to always remember the first face, which appears before the arrows. You do not need to remember the second face that appears after the arrows.

        For the Face Memory Game, you will have 4 seconds to recall the first face by using the buttons L, M, or R. For this game, it is more important to be correct than to be fast. If you try to respond too fast for the Face Memory Game, it will not continue.


        Press the right button to continue
    KeyboardComponent space_end_keyResp_11
      allowedKeys = right_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine task_finish
    TextComponent taskComplete_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Thank you for participating!

        Please let the experimenter know you finished.
    KeyboardComponent space_end_keyResp_12
      allowedKeys = experimenter_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine face_wm
    CodeComponent wm_face_code
      Code Type = Auto->JS
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      Begin Routine:
        #wm_face_name = img_list[stimNum] + "/" + str(middle_ratio) + ".png"
    ImageComponent wm_face
      image [set during: task_preload.task_ISI] = $"img/{}".format(wm_face_name)
      size = (face_size, face_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = wm_duration
      units = deg
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
  Routine face_recall
    CodeComponent face_recall_code
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(similarity)

        image_name = [
        img_list[stimNum] + "/" + str(int(similarity[0])) + ".png",
        img_list[stimNum] + "/" + str(int(similarity[1])) + ".png",
        img_list[stimNum] + "/" + str(int(similarity[2])) + ".png",
        ]
      End Routine:
        if recall_resp.keys:
            n_responses += 1
            recall_key = recall_resp.keys[0]
            if recall_key == "t":
                ST_loop.addData("recall", 1)
                ST_loop.addData("similarity", convert_ratio(similarity[0]))
            elif recall_key == "6":
                ST_loop.addData("recall", 2)
                ST_loop.addData("similarity", convert_ratio(similarity[1]))
            elif recall_key == "y":
                ST_loop.addData("recall", 3)
                ST_loop.addData("similarity", convert_ratio(similarity[2]))
        else:
            ST_loop.addData("recall", "None")
            ST_loop.addData("similarity", "None")
    TextComponent text
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      text = $recall_text
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    ImageComponent face_image_1
      image [set every repeat] = $"img/{}".format(image_name[0])
      pos = (x_locs[0], y_locs[0])
      size = (face_size, face_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      units = deg
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    ImageComponent face_image_2
      image [set every repeat] = $"img/{}".format(image_name[1])
      pos = (x_locs[1], y_locs[1])
      size = (face_size, face_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      units = deg
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    ImageComponent face_image_3
      image [set every repeat] = $"img/{}".format(image_name[2])
      pos = (x_locs[2], y_locs[2])
      size = (face_size, face_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      units = deg
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    TextComponent face_button_1
      letterHeight = number_size
      pos = (x_locs_buttons[0], y_locs_buttons[0])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      text = L
      units = deg
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    TextComponent face_button_2
      letterHeight = number_size
      pos = (x_locs_buttons[1], y_locs_buttons[1])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      text = M
      units = deg
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    TextComponent face_button_3
      letterHeight = number_size
      pos = (x_locs_buttons[2], y_locs_buttons[2])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      text = R
      units = deg
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    KeyboardComponent recall_resp
      allowedKeys = 't', '6', 'y'
      forceEndRoutine = True
      startVal [time (s)] = recall_delay
      stopVal [duration (s)] = recall_duration-recall_delay
      store = all keys
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    KeyboardComponent recall_resp_debug
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      store = all keys
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  Routine face_slow
    CodeComponent prime_code
      Code Type = Auto->JS
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      Begin Routine:
        # prime_start = np.random.choice(jitters)
        #prime_start = jitters[stimNum]
        if not too_slow:
            too_slow_duration = 0
            too_slow_opacity = 0
        elif too_slow:
            too_slow_duration = 0.2
            too_slow_opacity = 1
        if not show_face:
            prime_face_opacity = 0
        elif show_face:
            prime_face_opacity = 1

        #ratio = prime_list[stimNum]
        #flanker_face_name = img_list[stimNum]+ "/" + str(ratio) + ".png"

        ST_loop.addData("prime_jitter", prime_start)
        ST_loop.addData("prime", ratio)
    ImageComponent task_fixImg_4
      image [set during: task_preload.task_ISI] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = prime_start + prime_duration
      texture resolution = 512
      units = deg
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    TextComponent too_slow_text_2
      letterHeight = 0.04
      opacity [set every repeat] = too_slow_opacity
      startVal [time (s)] = 0
      stopVal [duration (s)] = too_slow_duration
      text = Too slow!
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    ImageComponent prime_face
      image [set during: task_preload.task_ISI] = $"img/{}".format(flanker_face_name)
      opacity [set every repeat] = prime_face_opacity
      size = (face_size, face_size)
      startVal [time (s)] = prime_start
      stopVal [duration (s)] = prime_duration
      units = deg
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  Routine flanker
    CodeComponent task_isi_code_3
      Code Type = Both
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        too_slow = False
        show_face = False
      End Routine:
        if flanker_face_resp.keys:
            show_face = True
        else:
            too_slow = True

        trialNum = trialNum + 1 #iterate trial number for this block

        if flanker_face_resp.keys: #if at least one response was made this trial
            if flanker_face_resp.keys[0] == "t": #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif flanker_face_resp.keys[0] == "y": #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        elif not flanker_face_resp.keys: # if no response was made
            accuracy = 0

        # save this trial's accuracy to our output file
        ST_loop.addData('flanker_acc', accuracy)
        ST_loop.addData('flanker_trial_end', t)
    ImageComponent task_centerImg
      image [set during: task_preload.task_ISI] = $middleStim
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent task_rightImg1
      image [set during: task_preload.task_ISI] = $rightStim1
      pos = (.71, 0)
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent task_rightImg2
      image [set during: task_preload.task_ISI] = $rightStim2
      pos = (1.42, 0)
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent task_leftImg1
      image [set during: task_preload.task_ISI] = $leftStim1
      pos = (-.71, 0)
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent task_leftImg2
      flipVert = True
      image [set during: task_preload.task_ISI] = $leftStim2
      pos = (-1.42, 0)
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent task_fixImg_3
      image [set during: task_preload.task_ISI] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = response_deadline
      texture resolution = 512
      units = deg
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    KeyboardComponent flanker_face_resp
      allowedKeys = "t", "y"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = response_deadline
      store = all keys
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  Routine instruct_left
    SoundComponent sound_2
      sound = audio/instruct_left.wav
      startVal [time (s)] = 0.0
      volume = volume
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    TextComponent instructLeft_text
      letterHeight = 0.04
      pos = (0, instruction_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the left button with your left hand. Please, use your index fingers to press the buttons.








        Press the left button to continue
    ImageComponent instructLeft_centerImg_2
      image = img/leftArrow.png
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructLeft_rightImg1_2
      image = img/leftArrow.png
      pos = (.71, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructLeft_rightImg2_2
      image = img/leftArrow.png
      pos = (1.42, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructLeft_leftImg1_2
      image = img/leftArrow.png
      pos = (-.71, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructLeft_leftImg2_2
      image = img/leftArrow.png
      pos = (-1.42, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    PolygonComponent highlight
      fillColor = yellow
      lineColor = yellow
      opacity = 0.3
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent instructLeft_keyResp_2
      allowedKeys = left_button
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = instruction_start
      store = nothing
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  Routine instruct_right
    SoundComponent sound_3
      sound = audio/instruct_right.wav
      startVal [time (s)] = 0.0
      volume = volume
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    TextComponent instructRight_text_2
      letterHeight = 0.04
      pos = (0, instruction_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the right button with your right hand. Please, use your index fingers to press the buttons.








        Press the right button to continue
    ImageComponent instructRight_centerImg_2
      image = img/rightArrow.png
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructRight_rightImg1_2
      image = img/rightArrow.png
      pos = (.71, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructRight_rightImg2_2
      image = img/rightArrow.png
      pos = (1.42, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructRight_leftImg1_2
      image = img/rightArrow.png
      pos = (-.71, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructRight_leftImg2_2
      image = img/rightArrow.png
      pos = (-1.42, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    PolygonComponent highlight_1
      fillColor = yellow
      lineColor = yellow
      opacity = 0.3
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent instructRight_keyResp_3
      allowedKeys = right_button
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = instruction_start
      store = nothing
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  Routine instruct_left_incon
    SoundComponent sound_4
      sound = audio/instruct_left_incon.wav
      startVal [time (s)] = 0.0
      volume = volume
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    TextComponent instructInconLeft_text_2
      letterHeight = 0.04
      pos = (0, instruction_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Sometimes the MIDDLE arrow will point in a different direction from the other arrows. However, your goal is to always respond to the MIDDLE arrow.

        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the left button with your left hand.







        Press the left button to continue
    ImageComponent instructInconLeft_centerImg_2
      image = img/leftArrow.png
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructInconLeft_rightImg1_2
      image = img/rightArrow.png
      pos = (.71, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructInconLeft_rightImg2_2
      image = img/rightArrow.png
      pos = (1.42, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructInconLeft_leftImg1_2
      image = img/rightArrow.png
      pos = (-.71, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructInconLeft_leftImg2_2
      image = img/rightArrow.png
      pos = (-1.42, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    PolygonComponent highlight_2
      fillColor = yellow
      lineColor = yellow
      opacity = 0.3
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent instructLeft_keyResp_4
      allowedKeys = left_button
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = instruction_start
      store = nothing
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  Routine instruct_right_incon
    SoundComponent sound_5
      sound = audio/instruct_right_incon.wav
      startVal [time (s)] = 0.0
      volume = volume
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    TextComponent instructInconRight_text
      letterHeight = 0.04
      pos = (0, instruction_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the right button with your right hand.








        Press the right button to continue
    ImageComponent instructIncon_centerImg_2
      image = img/rightArrow.png
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructIncon_rightImg1_2
      image = img/leftArrow.png
      pos = (.71, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructIncon_rightImg2_2
      image = img/leftArrow.png
      pos = (1.42, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructIncon_leftImg1_2
      image = img/leftArrow.png
      pos = (-.71, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    ImageComponent instructInconRight_leftImg2_2
      image = img/leftArrow.png
      pos = (-1.42, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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    PolygonComponent highlight_3
      fillColor = yellow
      lineColor = yellow
      opacity = 0.3
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent instructLeft_keyResp_5
      allowedKeys = right_button
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = instruction_start
      store = nothing
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
  Routine prac_flanker
    CodeComponent prac_flanker_code
      Code Type = Auto->JS
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      Begin Routine:
        too_slow = False
      End Routine:
        if not(prac_flanker_resp.keys):
            too_slow = True

        trialNum = trialNum + 1 #iterate trial number for this block

        if prac_flanker_resp.keys: #if at least one response was made this trial
            if prac_flanker_resp.keys[0] == "t": #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif prac_flanker_resp.keys[0] == "y": #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        elif not prac_flanker_resp.keys: # if no response was made
            accuracy = 0

        # save this trial's accuracy to our output file
        prac_flanker_loop.addData('prac_acc', accuracy)
    ImageComponent prac_centerImg
      image [set every repeat] = $middleStim
      size = [.6, .6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent prac_rightImg1
      image [set every repeat] = $rightStim1
      pos = (.71, 0)
      saveStartStop = False
      size = [.6, .6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent prac_rightImg2
      image [set every repeat] = $rightStim2
      pos = (1.42, 0)
      saveStartStop = False
      size = [.6, .6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent prac_leftImg1
      image [set every repeat] = $leftStim1
      pos = (-.71, 0)
      saveStartStop = False
      size = [.6, .6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent prac_leftImg2
      image [set every repeat] = $leftStim1
      pos = (-1.42, 0)
      saveStartStop = False
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent task_fixImg_5
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      saveStartStop = False
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = response_deadline
      texture resolution = 512
      units = deg
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    KeyboardComponent prac_flanker_resp
      allowedKeys = "t", "y"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = response_deadline
      store = all keys
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  Routine prac_flanker_fb
    CodeComponent prac_blockFeed_code_4
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockAcc >= FL_THRESH: #if accuracy >= 75% then say practice is complete and end practice loop to continue to main exp
            outPut = 'You will now practice the next part' #feedback presented
            flanker_block_loop.finished = True #end practice loop to continue to main exp
        elif blockAcc < FL_THRESH: #if accuracy < 75% then say that practice needs to be repeated and DO NOT end practice loop, instead, allow it to repeat
            outPut = 'Please try the practice again' #feedback presented
            flanker_block_loop.finished = False #DO NOT end practice loop and allow to repeat

        flanker_block_loop.addData('prac_blockAcc', blockAcc)

        #reset the following variables to zero before the next practice block starts
        trialNum = 0
        numCorr = 0
      End Routine:
        if prac_blockFeed_keyResp_4.keys[-1] == "9":
            flanker_block_loop.finished = True #end practice loop to continue to main exp
    TextComponent prac_blockFeed_text_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 1.3
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    TextComponent prac_pressContinue_4
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experimenter: press key to continue
      wrapWidth = 1.3
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    KeyboardComponent prac_blockFeed_keyResp_4
      allowedKeys [set every repeat] = "return", "num_add", "9"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine prac_slow
    CodeComponent slow_code
      Code Type = Auto->JS
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      Each Frame:
        if t >= prime_duration:
            continueRoutine = False
    ImageComponent task_fixImg_6
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      saveStartStop = False
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = prime_duration
      texture resolution = 512
      units = deg
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    TextComponent too_slow_text
      letterHeight = 0.04
      startVal [condition] = too_slow == True
      stopVal [duration (s)] = prime_duration
      text [set every repeat] = Too slow!
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  Routine prac_face_flanker
    CodeComponent task_isi_code_4
      Code Type = Both
      Begin Routine:
        too_slow = False
        show_face = False
      End Routine:
        if flanker_face_resp_2.keys:
            show_face = True
        else:
            too_slow = True

        trialNum = trialNum + 1 #iterate trial number for this block

        if flanker_face_resp_2.keys: #if at least one response was made this trial
            if flanker_face_resp_2.keys[0] == "t": #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr + 1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif flanker_face_resp_2.keys[0] == "y": #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        elif not flanker_face_resp_2.keys: # if no response was made
            accuracy = 0

        # save this trial's accuracy to our output file
        pracST_loop.addData('pracST_flanker_acc', accuracy)
    ImageComponent task_centerImg_2
      image [set during: preload_prac.prac_ISI] = $middleStim
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent task_rightImg1_2
      image [set during: preload_prac.prac_ISI] = $rightStim1
      pos = (.71, 0)
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent task_rightImg2_2
      image [set during: preload_prac.prac_ISI] = $rightStim2
      pos = (1.42, 0)
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent task_leftImg1_2
      image [set during: preload_prac.prac_ISI] = $leftStim1
      pos = (-.71, 0)
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent task_leftImg2_2
      flipVert = True
      image [set during: preload_prac.prac_ISI] = $leftStim2
      pos = (-1.42, 0)
      size = (.6, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flanker_duration
      texture resolution = 512
      units = deg
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    ImageComponent task_fixImg_8
      image [set during: preload_prac.prac_ISI] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = response_deadline
      texture resolution = 512
      units = deg
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    KeyboardComponent flanker_face_resp_2
      allowedKeys [set every repeat] = "t", "y"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = response_deadline
      store = all keys
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  Routine prac_wm_cue
    CodeComponent wm_face_code_2
      Code Type = Auto->JS
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      Begin Routine:
        #wm_face_name\
        #= prac_img_list[stimNum] + "/" + str(middle_ratio) + ".png"
    ImageComponent wm_face_2
      image [set during: preload_prac.prac_ISI] = $"img/prac_img/{}".format(wm_face_name)
      size = (face_size, face_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = wm_duration
      units = deg
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  Routine prac_prime
    CodeComponent prime_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # prime_start = np.random.choice(jitters)
        #prime_start = jitters[stimNum]
        if not too_slow:
            too_slow_duration = 0
            too_slow_opacity = 0
        elif too_slow:
            too_slow_duration = 0.2
            too_slow_opacity = 1
        if not show_face:
            prime_face_opacity = 0
        elif show_face:
            prime_face_opacity = 1

        #ratio = prac_prime_list[stimNum]
        #flanker_face_name\
        #= prac_img_list[stimNum] + "/" + str(ratio) + ".png"

        pracST_loop.addData("pracST_prime", ratio)
        pracST_loop.addData("pracST_prime_jitter", prime_start)
      Each Frame:
        #if t >= prime_duration:
         #   continueRoutine = False
    ImageComponent task_fixImg_7
      image [set during: preload_prac.prac_ISI] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = prime_start + prime_duration
      texture resolution = 512
      units = deg
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    TextComponent too_slow_text_3
      letterHeight = 0.04
      opacity [set every repeat] = too_slow_opacity 
      startVal [time (s)] = 0
      stopVal [duration (s)] = too_slow_duration
      text = Too slow!
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    ImageComponent prime_face_2
      image [set during: preload_prac.prac_ISI] = $"img/prac_img/{}".format(flanker_face_name)
      opacity [set every repeat] = prime_face_opacity
      size = (face_size, face_size)
      startVal [time (s)] = prime_start
      stopVal [duration (s)] = prime_duration
      units = deg
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  Routine prac_recall
    CodeComponent face_recall_code_2
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(similarity)

        image_name = [
            prac_img_list[stimNum] + "/" + str(int(similarity[0])) + ".png",
            prac_img_list[stimNum] + "/" + str(int(similarity[1])) + ".png",
            prac_img_list[stimNum] + "/" + str(int(similarity[2])) + ".png",
        ]
      End Routine:
        if prac_recall_resp.keys:
            prac_n_responses += 1
            recall_key = prac_recall_resp.keys[0]
            if recall_key == "t":
                pracST_loop.addData("pracST_recall", 1)
                pracST_loop.addData("pracST_similarity", convert_ratio(similarity[0]))
            elif recall_key == "6":
                pracST_loop.addData("pracST_recall", 2)
                pracST_loop.addData("pracST_similarity", convert_ratio(similarity[1]))
            elif recall_key == "y":
                pracST_loop.addData("pracST_recall", 3)
                pracST_loop.addData("pracST_similarity", convert_ratio(similarity[2]))
        else:
            pracST_loop.addData("pracST_recall", "None")
            pracST_loop.addData("pracST_similarity", "None")
    ImageComponent prac_face_image_1
      image [set every repeat] = $"img/prac_img/{}".format(image_name[0])
      opacity = opacity[0]
      pos = (x_locs[0], y_locs[0])
      size = (face_size, face_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      units = deg
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    ImageComponent prac_face_image_2
      image [set every repeat] = $"img/prac_img/{}".format(image_name[1])
      opacity = opacity[1]
      pos = (x_locs[1], y_locs[1])
      size = (face_size, face_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      units = deg
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    ImageComponent prac_face_image_3
      image [set every repeat] = $"img/prac_img/{}".format(image_name[2])
      opacity = opacity[2]
      pos = (x_locs[2], y_locs[2])
      size = (face_size, face_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      units = deg
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    TextComponent prac_face_button_1
      letterHeight = number_size
      pos = (x_locs_buttons[0], y_locs_buttons[0])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      text = L
      units = deg
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    TextComponent prac_face_button_2
      letterHeight = number_size
      pos = (x_locs_buttons[1], y_locs_buttons[1])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      text = M
      units = deg
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    TextComponent prac_face_button_3
      letterHeight = number_size
      pos = (x_locs_buttons[2], y_locs_buttons[2])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      text = R
      units = deg
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = recall_duration
      text = $recall_text
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    KeyboardComponent prac_recall_resp
      allowedKeys = 't', '6', 'y'
      forceEndRoutine = True
      startVal [time (s)] = recall_delay
      stopVal [duration (s)] = recall_duration-recall_delay
      store = all keys
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  Routine flanker_iti
    CodeComponent endTask_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1200, 1700, 500)
        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array
        ## save this ISI to our output file
        prac_flanker_loop.addData('ISI_fixation', thisISI)
    ImageComponent initFixation_img_6
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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  Routine task_block_fb
    CodeComponent stimTask_code_4
      Code Type = Auto->JS
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      Begin Routine:
        # calculate block accuracy
        blockAcc = numCorr / trialNum

        if n_responses < 37:
            blockFeed = "Please, provide a response each time you asked to remember the faces.\n\n"
        else:
            blockFeed = ""

        if blockCounter < 10:
            if blockAcc >= FL_THRESH:
                if blockAcc < FL_THRESH + .1:
                    blockFeed += 'Good job for the Arrow Alert.'
                    blockFeedCat = 1
                elif blockAcc >= FL_THRESH + .1:
                    blockFeed += 'Respond faster in the Arrow Alert Game, but take as much time as you need to remember the faces.'
                    blockFeedCat = 2
            elif blockAcc < FL_THRESH:
                blockFeed += 'Respond more accurately in the Arrow Alert Game and take as much time as you need to remember the first face.'
                blockFeedCat = 3
        elif blockCounter == 10:
            blockFeed = 'You have completed all blocks'

        # write block accuracy to data
        ST_block_loop.addData('blockAcc', blockAcc)
        # save this block's feedback to our output file
        ST_block_loop.addData('blockFeedCat', blockFeedCat)

        # reset
        numCorr = 0
        trialNum = 0
      End Routine:
        n_responses = 0
    TextComponent block_fb_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockFeed
      wrapWidth = 1.3
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    TextComponent task_blackFeed_text3
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = block_delay
      text = Please wait
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    TextComponent task_blockFeed_text2
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = block_delay
      text [set every repeat] = Press the right button to continue
      wrapWidth = 1.3
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    KeyboardComponent space_end_keyResp_13
      allowedKeys = right_button
      forceEndRoutine = True
      startVal [time (s)] = block_delay
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
  Routine fix_before_recall
    CodeComponent endTask_code_3
      Code Type = Auto->JS
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      Begin Routine:
        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1200, 1700, 500)
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 - prime_start # the first item of the shuffled array
        pracST_loop.addData('ISI_fixation', thisISI)
    ImageComponent initFixation_img_7
      image [set during: preload_prac.prac_ISI] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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  Routine initFix_flanker
    CodeComponent endTask_code_5
      Code Type = Auto->JS
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      Begin Routine:
        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1200, 1700, 500)
        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array
        ## save this ISI to our output file
        flanker_block_loop.addData('ISI_fixation', thisISI)
    ImageComponent initFixation_img_8
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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  Routine task_initFixation_prac
    CodeComponent endTask_code
      Code Type = Auto->JS
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      Begin Routine:
        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1200, 1700, 500)
        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array
        pracST_loop.addData('ISI_fixation', thisISI)
    ImageComponent initFixation_img
      image [set during: preload_prac.prac_ISI] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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  Routine task_initFixation
    CodeComponent endTask_code_6
      Code Type = Auto->JS
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      Begin Routine:
        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1200, 1700, 500)
        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array
        ST_loop.addData('ISI_fixation', thisISI)
    ImageComponent initFixation_img_9
      image [set during: task_preload.task_ISI] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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  Routine preload_prac
    CodeComponent endTask_code_7
      Code Type = Auto->JS
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      Begin Routine:
        wm_face_name\
        = prac_img_list[stimNum] + "/" + str(middle_ratio) + ".png"

        prime_start = jitters[stimNum]
        ratio = prac_prime_list[stimNum]
        flanker_face_name\
        = prac_img_list[stimNum] + "/" + str(ratio) + ".png"

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1200, 1700, 500)
        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        pracST_loop.addData('ISI_fixation', thisISI)
    ImageComponent initFixation_img_10
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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    StaticComponent prac_ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = $thisISI
      syncScreenRefresh = True
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  Routine task_preload
    StaticComponent task_ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = $thisISI
      syncScreenRefresh = True
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    CodeComponent endTask_code_8
      Code Type = Auto->JS
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      Begin Routine:
        wm_face_name = img_list[stimNum] + "/" + str(middle_ratio) + ".png"

        prime_start = jitters[stimNum]
        ratio = prime_list[stimNum]
        flanker_face_name = img_list[stimNum]+ "/" + str(ratio) + ".png"

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1200, 1700, 500)
        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array
        ST_loop.addData('ISI_fixation', thisISI)
    ImageComponent initFixation_img_11
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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
  Routine test_stim_size
    ImageComponent image_2
      image = img/CFD-BM-252-161-N_CFD-BM-249-235-N-aligned-windowed/6.png
      size = 6
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
      units = deg
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Flow
  Routine JS_code
  Routine setup
  Routine test_stim_size
  Routine welcome
  Routine instruct_left
  Routine instruct_right
  Routine instruct_left_incon
  Routine instruct_right_incon
  Routine respond_onceInstruct
  LoopInitiator flanker_block_loop loopType="TrialHandler"
    loopType = fullRandom
    nReps = 99
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    Routine prac_blockReminders
    Routine initFix_flanker
    LoopInitiator prac_flanker_loop loopType="TrialHandler"
      conditionsFile = prac_flanker.xlsx
      loopType = fullRandom
      nReps = flanker_practice
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      conditions:
        [{'middleStim': 'img/rightArrow.png', 'rightStim1': 'img/rightArrow.png', 'rightStim2': 'img/rightArrow.png', 'leftStim1': 'img/rightArrow.png', 'leftStim2': 'img/rightArrow.png', 'stimNum': 1, 'congruent': 1, 'target': 'right'},
        {'middleStim': 'img/leftArrow.png', 'rightStim1': 'img/leftArrow.png', 'rightStim2': 'img/leftArrow.png', 'leftStim1': 'img/leftArrow.png', 'leftStim2': 'img/leftArrow.png', 'stimNum': 2, 'congruent': 1, 'target': 'left'},
        {'middleStim': 'img/rightArrow.png', 'rightStim1': 'img/leftArrow.png', 'rightStim2': 'img/leftArrow.png', 'leftStim1': 'img/leftArrow.png', 'leftStim2': 'img/leftArrow.png', 'stimNum': 3, 'congruent': 0, 'target': 'right'},
        {'middleStim': 'img/leftArrow.png', 'rightStim1': 'img/rightArrow.png', 'rightStim2': 'img/rightArrow.png', 'leftStim1': 'img/rightArrow.png', 'leftStim2': 'img/rightArrow.png', 'stimNum': 4, 'congruent': 0, 'target': 'left'}]
      Routine prac_flanker
      Routine prac_slow
      Routine flanker_iti
    LoopTerminator prac_flanker_loop
    Routine prac_flanker_fb
  LoopTerminator flanker_block_loop
  Routine instruct_SuperTrial
  LoopInitiator pracST_block_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 99
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    Routine reminder_SuperTrial
    LoopInitiator pracST_loop loopType="TrialHandler"
      conditionsFile = prac_img_list.xlsx
      loopType = fullRandom
      nReps = supertrial_practice
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      conditions:
        [{'fname': 'CFD-LF-213-079-N_CFD-LF-200-058-N-aligned-windowed', 'leftStim1': 'img/rightArrow.png', 'leftStim2': 'img/rightArrow.png', 'stimNum': 1, 'congruent': 1, 'target': 'right'},
        {'fname': 'CFD-MM-307-002-N_CFD-MM-320-124-N-aligned-windowed', 'leftStim1': 'img/leftArrow.png', 'leftStim2': 'img/leftArrow.png', 'stimNum': 2, 'congruent': 1, 'target': 'left'},
        {'fname': 'CFD-AF-210-050-N_CFD-AF-205-155-N-aligned-windowed', 'leftStim1': 'img/leftArrow.png', 'leftStim2': 'img/leftArrow.png', 'stimNum': 3, 'congruent': 0, 'target': 'right'},
        {'fname': 'CFD-MF-325-002-N_CFD-MF-349-036-N-aligned-windowed', 'leftStim1': 'img/rightArrow.png', 'leftStim2': 'img/rightArrow.png', 'stimNum': 4, 'congruent': 0, 'target': 'left'},
        {'fname': 'CFD-WM-029-023-N_CFD-WM-256-138-N-aligned-windowed', 'leftStim1': 'img/rightArrow.png', 'leftStim2': 'img/rightArrow.png', 'stimNum': 1, 'congruent': 1, 'target': 'right'},
        {'fname': 'CFD-LF-213-079-N_CFD-LF-245-166-N-aligned-windowed', 'leftStim1': 'img/leftArrow.png', 'leftStim2': 'img/leftArrow.png', 'stimNum': 2, 'congruent': 1, 'target': 'left'},
        {'fname': 'CFD-WF-216-079-N_CFD-WF-243-148-N-aligned-windowed', 'leftStim1': 'img/leftArrow.png', 'leftStim2': 'img/leftArrow.png', 'stimNum': 3, 'congruent': 0, 'target': 'right'},
        {'fname': 'CFD-MM-313-002-N_CFD-MM-323-053-N-aligned-windowed', 'leftStim1': 'img/rightArrow.png', 'leftStim2': 'img/rightArrow.png', 'stimNum': 4, 'congruent': 0, 'target': 'left'}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
      Routine preload_prac
      Routine prac_wm_cue
      Routine task_initFixation_prac
      Routine prac_face_flanker
      Routine prac_prime
      Routine fix_before_recall
      Routine prac_recall
    LoopTerminator pracST_loop
    Routine pracSuperTrial_feed
  LoopTerminator pracST_block_loop
  LoopInitiator ST_block_loop loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'block_num': 1},
      {'block_num': 2},
      {'block_num': 3},
      {'block_num': 4},
      {'block_num': 5},
      {'block_num': 6},
      {'block_num': 7},
      {'block_num': 8},
      {'block_num': 9},
      {'block_num': 10}]
    Routine task_condition
    LoopInitiator ST_loop loopType="TrialHandler"
      conditionsFile = $"block_{}.xlsx".format(block_num)
      loopType = fullRandom
      nReps = 1
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      Routine eeg_trigger_check
      Routine task_preload
      Routine face_wm
      Routine task_initFixation
      Routine flanker
      Routine face_slow
      Routine fix_before_recall
      Routine face_recall
    LoopTerminator ST_loop
    Routine task_block_fb
  LoopTerminator ST_block_loop
  Routine task_finish
