PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/sub-%s_%s_s%s_r%s_e1_%s_%s' % (expInfo['id'], expName, expInfo['session'], expInfo['run'], expInfo['hand'], expInfo['repeat'])
  Experiment info = {'id': '', 'hand': "['L', 'R']", 'repeat': "['No', 'Yes']", 'session': '1', 'run': '1', 'event': '1'}
  Full-screen window = True
  Monitor = sys-1-asus
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -0.3000, -0.3000, -0.3000
  expName = wme-eeg
  keyboardBackend = ioHub
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Routines
  Routine JS_code
    CodeComponent JScode
      Code Type = JS
      disabled = True
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine setup
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        #import serial #used for sending eeg triggers
        #import time #indirerctly used for sending eeg triggers (how long to wait before clearing port)

        #win.mouseVisible = False #hide mouse cursor
        #port = serial.Serial('COM3') # Open specified serial port (COM4) for sending eeg triggers to
        #PulseWidth = 0.002 #how long to wait before clearing port after sending trigger (2 ms is sufficient at 1000 hz sampling rate)
        #port.write([0x00]) #clear serial port
        #time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
      Begin Routine:
        win.mouseVisible = False #hide mouse cursor
      End Experiment:
        win.mouseVisible = True #make the mouse cursor visable again
        #port.write([0xFF]) #set port values back to default state (FF)
        #time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
        #port.close() #close port opened at start of exp
    CodeComponent config_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # whether we want letters from WM and flanker could be same
        if expInfo["repeat"] == "No":
            repeat_letters = False
        if expInfo["repeat"] == "Yes":
            repeat_letters = True
        # whether we want letters inside flanker could be same
        repeat_letters_fl = False

        used_letters = [] # letters used in WM and flanker trials (to prevent repeates in WM and flanker within supertrial)
        used_letters_fl = [] # letters used in flanker trials (to prevent repeats within flanker trials)
        shown_letters = [] # exact letters shown in WM (i.e., considered lower-/uppercase)

        CROSS_Y = -0.73 # position of fix cross (to easily adjust when switch from macbook to asus), for asus should be -0.71

        # initialize thresholds for flanker and WM practice
        WM_THRESH = 0.7
        FL_THRESH = 0.7

        # initialize trial, block counters and accuracy
        numCorr_wm = 0
        trialNum_wm = 0
        numCorr_fl = 0
        trialNum_fl = 0
        blockCounter = 0
        trialNum = 0
        accuracy = 0
        numCorr = 0
        blockAcc_wm = 0
        blockAcc_fl = 0

        # initialize the thisISI variable used for all ISI
        thisISI = 0

        # consontant capital letters without Y and L
        # (because lowercase l looks like capitalized i)
        WM_LETTERS = ['B', 'C', 'D',
        'F', 'G', 'H',
        'J', 'K', #'L',
        'M', 'N', 'P',
        'Q', 'R', 'S',
        'T', 'V', 'W',
        'X', 'Z']

        # initialize reminders for flanker trials
        if expInfo["hand"] == "L":
            left_reminder = "Left button\nCAPITALIZED"
            right_reminder = "Right button\nlowercase"
        elif expInfo["hand"] == "R":
            left_reminder = "Left button\nlowercase"
            right_reminder = "Right button\nCAPITALIZED"
  Routine welcome
    KeyboardComponent welcome_keyResp
      allowedKeys [set every repeat] = 'c'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $welcome_keyResp.keys
      store = nothing
      syncScreenRefresh = False
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    KeyboardComponent welcome_keyResp2
      allowedKeys [set every repeat] = '8'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $welcome_keyResp.keys
      store = nothing
      syncScreenRefresh = False
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    TextComponent welcome_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Today you are going to play 2 different games. In both games you will be dealing with letters, but in a different way. Before starting playing you will do some practice to learn the rules.

        Press SPACE to proceed to the practice
    KeyboardComponent space_end_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructWM1
    TextComponent instructWM_text1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Welcome to the Memory Game! In this game, you will be shown a set of letters presented one by one. Your goal is to remember these letters and recall them in the order they appeared without making mistakes. Please, do not say the letters out loud.


        Press SPACE to see an example
    KeyboardComponent instructWM_keyResp1
      allowedKeys [set every repeat] = 'c'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent space_end_keyResp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_initFixaion_WM
    CodeComponent prac_fixWM_code
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(2600, 3000, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # empty lists of used letters
        used_letters = []
        used_letters_fl = []
        shown_letters = []
    ImageComponent initFixation_img_4
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = thisISI
      texture resolution = 512
      units = deg
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  Routine instructWM3
    TextComponent instructWM_text3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $"For example, this time the letters were:\n {}\n\n\n\n Press SPACE to see another example".format("".join(used_letters))
      wrapWidth = 1.3
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    CodeComponent instructWM_code3
      Code Type = Auto->JS
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      End Routine:
        # empty lists of used letters
        used_letters = []
        shown_letters = []
    KeyboardComponent space_end_keyResp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine instructWM_seq1
    CodeComponent we_seq_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # choose the case of a letter randomly (0 = capitalized, 1 = lowercase)
        case_randomizer = random.randint(0, 1)

        # pick a letter to show for this trial
        shuffle(WM_LETTERS)

        if case_randomizer == 0:
            letter = [i for i in WM_LETTERS if i not in used_letters][0]
        elif case_randomizer == 1:
            letter = [i.lower() for i in WM_LETTERS if i not in used_letters][0]

        # remember a letter shown in each trial
        used_letters.append(letter.upper())
        shown_letters.append(letter)
      End Routine:
        # write used and shown letters to data
        instructWM_loop.addData('instructWM_used_letters',
        ''.join(used_letters))
        instructWM_loop.addData('instructWM_shown_letters',
        ''.join(shown_letters))
    CodeComponent wm_isi_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next letter to appear

        # make range from a to b in n stepsizes
        wm_ISIRange = np.linspace(400, 800, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(wm_ISIRange)
        wm_thisISI = wm_ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        instructWM_loop.addData('instructWM_isi', wm_thisISI)
    TextComponent wm_stim_2
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $letter
      units = deg
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    ImageComponent wm_fixImg_2
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wm_thisISI+0.5
      texture resolution = 512
      units = deg
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  Routine instructWM_seq2
    CodeComponent we_seq_code_3
      Code Type = Auto->JS
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      Begin Routine:
        # choose the case of a letter randomly (0 = capitalized, 1 = lowercase)
        case_randomizer = random.randint(0, 1)

        # pick a letter to show for this trial
        shuffle(WM_LETTERS)

        if case_randomizer == 0:
            letter = [i for i in WM_LETTERS if i not in used_letters][0]
        elif case_randomizer == 1:
            letter = [i.lower() for i in WM_LETTERS if i not in used_letters][0]

        # remember a letter shown in each trial
        used_letters.append(letter.upper())
        shown_letters.append(letter)
      End Routine:
        # write used and shown letters to data
        instructWM_loop2.addData('instructWM_used_letters',
        ''.join(used_letters))
        instructWM_loop2.addData('instructWM_shown_letters',
        ''.join(shown_letters))
    CodeComponent wm_isi_code_3
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next letter to appear

        # make range from a to b in n stepsizes
        wm_ISIRange = np.linspace(400, 800, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(wm_ISIRange)
        wm_thisISI = wm_ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        instructWM_loop2.addData('instructWM_isi', wm_thisISI)
    TextComponent wm_stim_3
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $letter
      units = deg
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    ImageComponent wm_fixImg_3
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wm_thisISI+0.5
      texture resolution = 512
      units = deg
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  Routine instructWM4
    TextComponent instructWM_text4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $"This time the letters were:\n {}\n\n Did you notice that this time there were 5 letters? In this game, sequences you will need to remember may consist of 4 or 5 letters.\n\n Now you will practice yourself. Remember to not read the letters out loud.\n\n\n Press SPACE to start the practice".format("".join(used_letters))
      wrapWidth = 1.3
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    CodeComponent instructWM_code4
      Code Type = Auto->JS
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      End Routine:
        # empty lists of used letters
        used_letters = []
        shown_letters = []
    KeyboardComponent space_end_keyResp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine pracWM_recall
    CodeComponent wm_recall_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # define underscores for typing field according to WM load
        n_underscores = 4
        reminder_text = ""

        # define allowed keys for typed response (only letters)
        wm_allowed_keys =\
        ['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j',
        'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't',
        'u', 'v', 'w', 'x', 'y', 'z', 'A', 'B', 'C', 'D',
        'E', 'F', 'G', 'H', 'I', 'J', 'K', 'L', 'M', 'N',
        'O', 'P', 'Q', 'R', 'S', 'T', 'U', 'V', 'W', 'X',
        'Y', 'Z']
      Each Frame:
        # if used lowercase letters in the response, turn into upper
        wm_recall_typedResp_2.text = \
        wm_recall_typedResp_2.text.upper()

        # limit length of input to the length of wm load in the block
        if len(wm_recall_typedResp_2.text) > n_underscores:
            wm_recall_typedResp_2.text = \
            wm_recall_typedResp_2.text[:n_underscores]
        # limit keys allowed to use to only letters
        if any(i not in wm_allowed_keys \
        for i in wm_recall_typedResp_2.text):
            wm_recall_typedResp_2.text = \
            wm_recall_typedResp_2.text[:-1]
        # restrict participant of giving a partial response (e.g. 3 letters when 4 required)
        if len(wm_recall_typedResp_2.text) < n_underscores\
        and 'space' in wm_recall_keyResp_2.getKeys():
            reminder_text = "please, provide a full response ({} letters)".format(n_underscores)
        elif len(wm_recall_typedResp_2.text) == n_underscores\
        and 'space' in wm_recall_keyResp_2.getKeys():
            continueRoutine = False
        elif len(wm_recall_typedResp_2.text) == n_underscores:
            reminder_text = ""
    TextComponent wm_recall_text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Type the letters from the Memory Game in the order they appeared







        Press SPACE when you finish
    TextboxComponent wm_recall_typedResp_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent wm_recall_keyResp_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent underscores_text_2
      letterHeight = 0.045
      pos = (0, 0.01)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"\n"+n_underscores*" _"
      wrapWidth = 1.3
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    CodeComponent wm_accuracy_code_2
      Code Type = Auto->JS
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      End Routine:
        # check if typed response matches the letter sequece presented
        # OLD VERSION (BINARY)
        #if wm_recall_typedResp_2.text == ''.join(used_letters[-4:]):
        #    wm_accuracy = 1
        #    numCorr += 1
        #    wm_fb_text = "You are right! \nThe letters were {}".format(''.join(used_letters[-4:]))
        #else:
        #    wm_accuracy = 0
        #    wm_fb_text = "Not quite right... \nThe letters were {} \n\nPlease try to recall the letters in the order they appeared".format(''.join(used_letters[-4:]))

        # check if typed response matches the letter sequece presented
        # and generate feedback
        wm_response = wm_recall_typedResp_2.text
        correct_letters = used_letters.copy()
        wm_accuracy = 0
        for i in wm_response:
            if i in correct_letters:
                wm_accuracy += 1/len(wm_response)
                correct_letters.remove(i)

        if wm_response == ''.join(used_letters):
            wm_fb_text = "You are right! \nThe letters were {}".format(''.join(used_letters[-4:]))
        elif wm_accuracy >= WM_THRESH:
            wm_fb_text = "You have almost made it! \nThe letters were {} \n\nPlease try to recall the letters in the order they appeared".format(''.join(used_letters[-4:]))
        elif wm_accuracy < WM_THRESH:
            wm_fb_text = "Not quite right... \nThe letters were {} \n\nPlease try to recall the letters in the order they appeared".format(''.join(used_letters[-4:]))

        # calculate accuracy and add trial to counter
        numCorr += wm_accuracy
        trialNum += 1

        # write used letters to data (redundant)
        # pracWM_trial_loop.addData('pracWM_used_letters',''.join(used_letters))
        # write shown letters to data (redundant)
        # pracWM_trial_loop.addData('pracWM_shown_letters',''.join(shown_letters))
        # write response letters to data
        pracWM_trial_loop.addData('pracWM_wm_response', wm_response)
        # save this trial's wm accuracy to our output file
        pracWM_trial_loop.addData('pracWM_wm_accuracy', wm_accuracy)

        # empty lists of used letters
        used_letters = []
        shown_letters = []
    TextComponent full_response_reminder_text_2
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $reminder_text
      wrapWidth = 1.3
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  Routine pracWM_fb
    TextComponent instructWM_fb_text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $wm_fb_text
      wrapWidth = 1.3
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    TextComponent instructWM_cont_text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Press SPACE to continue practicing
    KeyboardComponent space_end_keyResp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pracWM_feed
    CodeComponent prac_blockFeed_code_2
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockAcc >= WM_THRESH: #if accuracy >= threshold then say practice is complete and end practice loop to continue to main exp
            outPut = 'Great! Now you are going to learn how to play the second game!'
            pracWM_block_loop.finished = True #end practice loop to continue to main exp
        elif blockAcc <= WM_THRESH: #if accuracy < threshold then say that practice needs to be repeated and DO NOT end practice loop, instead, allow it to repeat
            outPut = 'You will now practice the Memory Game 5 more times' #feedback presented
            pracWM_block_loop.finished = False #DO NOT end practice loop and allow to repeat

        pracWM_block_loop.addData('pracWM_blockAcc', blockAcc)

        #reset the following variables to zero before the next practice block starts
        trialNum = 0
        numCorr = 0
      End Routine:
        if prac_blockFeed_keyResp_2.keys[-1] == 's':
            pracWM_block_loop.finished = True #end practice loop to continue to main exp
    TextComponent prac_blockFeed_text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 1.3
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    TextComponent prac_pressContinue_2
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue practicing
      wrapWidth = 1.3
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    KeyboardComponent prac_blockFeed_keyResp_2
      allowedKeys = 'space', 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructMiddle
    TextComponent welcome_text_2_L
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "L"
      units = height
      wrapWidth = 1.3
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      text [set every repeat]:
        Welcome to the BiG Letters Game! This game will require you to quickly respond to letters based on whether they are CAPITALIZED or lowercase.

        During this game, five letters will appear at a time. They will be quickly flashed on the screen. Your goal is to respond to the MIDDLE letter, and to respond as quickly as you can without making mistakes.

        If the MIDDLE letter is lowercase, use your right hand to press the right button (8). If the MIDDLE letter is CAPITALIZED, use your left hand to press the left button (1).

        Press SPACE to continue
    TextComponent welcome_text_2_R
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "R"
      wrapWidth = 1.3
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      text [set every repeat]:
        Welcome to the BiG Letters Game! This game will require you to quickly respond to letters based on whether they are CAPITALIZED or lowercase.

        During this part, five letters will appear at a time. They will be quickly flashed on the screen. Your goal is to respond to the MIDDLE letter, and to respond as quickly as you can without making mistakes.

        If the MIDDLE letter is lowercase, use your left hand to press the left button (1). If the MIDDLE letter is CAPITALIZED, use your right hand to press the right button (8).

        Press SPACE to continue
    KeyboardComponent space_end_keyResp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine respond_onceInstruct
    TextComponent respond_once_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Each time you see the letters appear, respond as quickly as you can without making mistakes.

        However, only respond once each time you see the letters appear. Even if you think you made the wrong response, do not respond again until you see the next set of letters appear.

        Press SPACE to continue
    KeyboardComponent space_end_keyResp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent left_reminder_text_2
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_2
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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  Routine eeg_trigger_check
    CodeComponent triggerCheck_code
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        #initialize usb connected variable
        usbConnected = 1
      Begin Routine:
        #(re)open trigger port. This is done in case the connection failed,
        #in which case triggers will no longer be sent until the port is reopened.

        #At start of routine, we try to close/open the port. This will usually be
        #succesful, causing us to end the routine altogether. However, it will fail if
        #the usb is unplugged. In this latter case, the routine will then run code each
        #frame to constantly check for the usb being plugged back in, before continuing.

        try:
        #if usb connected, port will close/open and routine will end
            port.close()
            port.open()
            usbConnected = 1 #if successful, set usbConnectd to 1
            continueRoutine = False #if successful, end the routine

        except: #if port close/open fails, then set usbConnected to 0. Routine will loop each frame until fixed.
            usbConnected = 0 #if failure, set usbConnected to 0
      Each Frame:
        #if the usb is not connected, then keep trying to open port to determine when it has been reconnected.
        if usbConnected == 0:

            try:
                #if usb connected, port will close/open and routine will end
                port.close()
                port.open()
                usbConnected = 1 #if successful, set usbConnectd to 1
                #send trigger to indicate that there was a connection issue that is now resolved
                port.write([0x63]) #hexcode = 99; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
                #if successful, end the routine
                continueRoutine = False

            except: #if usb not connected, routine will continue (keep checking port and keep showing message)
                usbConnected = 0 #if failure, set usbConnectd to 0
                time.sleep(0.5) #wait .5 secs before checking again, to not overload the system
    TextComponent triggerIssue_text
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = EEG EQUIPMENT ISSUE: please ring bell for experimenter
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  Routine prac_blockReminders
    TextComponent prac_blockText
      letterHeight = 0.06
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent prac_reminder_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Respond as quickly as you can without making mistakes. Only respond once each time you see the letters appear. Always respond whether the MIDDLE letter is CAPITALIZED or lowercase.

        Remember not to say any of the letters out loud. To get ready, rest your thumbs on the right and left buttons.


        Press SPACE to continue
    TextComponent left_reminder_text
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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    KeyboardComponent space_end_keyResp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_initFixation
    CodeComponent prac_endTask_code
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(2600, 3000, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        # prac_block_loop.addData('ISI_fixation', thisISI)

        #if endCondition: # skip all trials for this condition; participant will not play game.
        #    task_block_loop.finished = True
        #    continueRoutine = False

        # empty lists of used letters
        used_letters = []
        shown_letters = []
    ImageComponent initFixation_img_2
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = thisISI
      texture resolution = 512
      units = deg
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    TextComponent left_reminder_text_3
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_3
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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  Routine prac_stimRoutine
    CodeComponent prac_flanker_letters_code
      Code Type = Auto->JS
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      Begin Routine:
        # leave only not-used letters for flanker
        if repeat_letters == True:
            flanker_letters = \
            [i for i in WM_LETTERS]
        elif repeat_letters == False:
            flanker_letters = \
            [i for i in WM_LETTERS\
            if i not in used_letters]

        # if there is an L, we don't want in in flanker
        if "L" in flanker_letters:
            flanker_letters.remove("L")

        # shuffle again
        shuffle(flanker_letters)

        # take flanker letter and add to used flanker letters
        flanker_stim = flanker_letters[0]

        # create flanker stimuli based on the congruency and case
        if congruent == 1 and target == "uppercase":
            flanker_stim = "{}".format(flanker_stim*5)
        elif congruent == 1 and target == "lowercase":
            flanker_stim = "{}".format(flanker_stim.lower()*5)
        elif congruent == 0 and target == "uppercase":
            flanker_stim = "{}{}{}".format(flanker_stim.lower()*2,
            flanker_stim, flanker_stim.lower()*2)
        elif congruent == 0 and target == "lowercase":
            flanker_stim = "{}{}{}".format(flanker_stim*2,
            flanker_stim.lower(), flanker_stim*2)
        else: flanker_stim = "error"
      End Routine:
        # write flanker stimuli to data
        prac_trial_loop.addData('prac_flanker_stim',
        flanker_stim)
    CodeComponent prac_isi_code
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1300, 1800, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        prac_trial_loop.addData('prac_flanker_ISI', thisISI)

        # show in console for debugging
        #print('thisISI: ', thisISI)
    TextComponent prac_flanker_text_stim
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $flanker_stim
      units = deg
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    ImageComponent prac_fixImg
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      saveStartStop = False
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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    TextComponent left_reminder_text_4
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_4
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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    KeyboardComponent prac_stim_keyResp
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent prac_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if expInfo["counterbalance"] == "L":
            if prac_stim_keyResp.keys: #if at least one response was made this trial
                if prac_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                    if target == 'uppercase': #if a left target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                    elif target == 'lowercase': #if a right target stim was shown this trial
                        accuracy = 0 #mark this trial as an error
                elif prac_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                    if target == 'lowercase': #if a right target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                    elif target == 'uppercase': #if a left target stim was shown this trial
                        accuracy = 0 #mark this trial as an error

            elif not prac_stim_keyResp.keys: # if no response was made
                accuracy = 0

        elif expInfo["counterbalance"] == "R":
            if prac_stim_keyResp.keys: #if at least one response was made this trial
                if prac_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                    if target == 'lowercase': #if a left target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                    elif target == 'uppercase': #if a right target stim was shown this trial
                        accuracy = 0 #mark this trial as an error
                elif prac_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                    if target == 'uppercase': #if a right target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                    elif target == 'lowercase': #if a left target stim was shown this trial
                        accuracy = 0 #mark this trial as an error

            elif not prac_stim_keyResp.keys: # if no response was made
                accuracy = 0

        # save this trial's accuracy to our output file
        prac_trial_loop.addData('prac_flanker_accuracy', accuracy)
    CodeComponent prac_stimTrigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if prac_centerImg.status == STARTED and not stimTriggerSent:
            if stimNum == 1: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x01]) #hexcode = 1; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 2:
                stimTriggerSent = True
                port.write([0x02])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 3:
                stimTriggerSent = True
                port.write([0x03])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 4:
                stimTriggerSent = True
                port.write([0x04])
                time.sleep(PulseWidth)
                port.write([0x00])
    CodeComponent prac_respTrigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if prac_stim_keyResp.keys and len(prac_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(prac_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial (-1 is the last position)
            if len(prac_stim_keyResp.keys) < 2: #if this is  the first response
                if prac_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif prac_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(prac_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if prac_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif prac_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
  Routine prac_blockFeed
    CodeComponent prac_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum # compute accuracy for this block

        if blockAcc >= FL_THRESH: # if accuracy >= threshold then say practice is complete and end practice loop to continue to main exp
            outPut = 'Well done! Now you are ready to practice both games together!' #feedback presented
            prac_block_loop.finished = True #end practice loop to continue to main exp
        elif blockAcc <= FL_THRESH: # if accuracy < threshold then say that practice needs to be repeated and DO NOT end practice loop, instead, allow it to repeat
            outPut = 'Please try the practice again' #feedback presented
            prac_block_loop.finished = False #DO NOT end practice loop and allow to repeat

        prac_block_loop.addData('prac_flanker_blockAcc', blockAcc)

        # reset the following variables to zero before the next practice block starts
        trialNum = 0
        numCorr = 0
      End Routine:
        if prac_blockFeed_keyResp.keys[-1] == 's':
            prac_block_loop.finished = True #end practice loop to continue to main exp
    TextComponent prac_blockFeed_text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 1.3
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    TextComponent prac_pressContinue_3
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
      wrapWidth = 1.3
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    KeyboardComponent prac_blockFeed_keyResp
      allowedKeys = 'space','s'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruct_SuperTrial
    TextComponent intruct_SuperTrial_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        For the rest of today you will play both games at the same time! You will be presented with letters for the Memory Game and have to remember the letters while you play the BiG Letters Game. You will then have to recall the letters from the Memory Game, in the order they appeared. Remember not to say the letters out loud.

        Let’s do some practice!


        Press SPACE to continue
    KeyboardComponent space_end_keyResp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine reminder_SuperTrial
    CodeComponent WM_LETTERS_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # define a new letters list before new supertrial
        supertrial_letters = WM_LETTERS.copy()
        shuffle(supertrial_letters)

        # clean used letters list before new supertrial
        used_letters = []
        used_letters_fl = []
        shown_letters = []
    TextComponent prac_blockText_3
      letterHeight = 0.06
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent task_blockReminders_text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        When the Memory Game letters are displayed, be sure to keep these in your memory. You will then recall these letters in the order that they appeared, after the BiG Letters Game.

        For the BiG Letters Game, respond as quickly as you can without making mistakes. Only respond once each time you see the letters appear in the BiG Letters Game. Always respond whether the MIDDLE letter is CAPITALIZED or lowercase.

        Remember not to say any of the letters out loud. To get ready, rest your thumbs on the right and left buttons.


        Press SPACE to begin
    KeyboardComponent task_blockReminders_keyResp_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pracSuperTrial_seq
    CodeComponent we_seq_code_5
      Code Type = Auto->JS
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      Begin Routine:
        # choose the case of a letter randomly (0 = capitalized, 1 = lowercase)
        case_randomizer = random.randint(0, 1)

        # pick a letter to show for this trial
        shuffle(WM_LETTERS)

        if case_randomizer == 0:
            letter = [i for i in WM_LETTERS if i not in used_letters][0]
        elif case_randomizer == 1:
            letter = [i.lower() for i in WM_LETTERS if i not in used_letters][0]

        # remember the letter shown in each trial
        used_letters.append(letter.upper())
        shown_letters.append(letter)
      End Routine:
        # write used and shown letters to data
        pracSuperTrial_seq_loop.addData('pracSuperTrial_used_letters',
        ''.join(used_letters))
        pracSuperTrial_seq_loop.addData('pracSuperTrial_shown_letters',
        ''.join(shown_letters))
    CodeComponent wm_isi_code_5
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next letter to appear

        # make range from a to b in n stepsizes
        wm_ISIRange = np.linspace(400, 800, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(wm_ISIRange)
        wm_thisISI = wm_ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        pracSuperTrial_seq_loop.addData('pracSuperTrial_wm_isi', wm_thisISI)
    TextComponent wm_stim_5
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $letter
      units = deg
      wrapWidth = 1
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    ImageComponent wm_fixImg
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $wm_thisISI+0.5
      texture resolution = 512
      units = deg
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  Routine prac_SuperTrialFixation
    CodeComponent prac_endTask_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1600, 2000, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        #prac_block_loop.addData('ISI_fixation', thisISI)
        #if endCondition: # skip all trials for this condition; participant will not play game.
        #    task_block_loop.finished = True
        #    continueRoutine = False
    ImageComponent initFixation_img_3
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = thisISI
      texture resolution = 512
      units = deg
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    TextComponent left_reminder_text_5
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_5
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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  Routine pracSuperTrial_flanker
    CodeComponent flanker_letters_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # leave only not-used letters for flanker
        if repeat_letters == True:
            flanker_letters = \
            [i for i in WM_LETTERS]
        elif repeat_letters == False:
            flanker_letters = \
            [i for i in WM_LETTERS if i not in used_letters]

        if repeat_letters_fl == False:
            flanker_letters = [i for i in flanker_letters\
            if i not in used_letters_fl]

        # if there is an L, we don't want in in flanker
        if "L" in flanker_letters:
            flanker_letters.remove("L")

        # shuffle again
        shuffle(flanker_letters)

        # take flanker letter and add to used flanker letters
        flanker_stim = flanker_letters[0]
        used_letters_fl.append(flanker_stim)

        # create flanker stimuli based on the congruency and case
        if congruent == 1 and target == "uppercase":
            flanker_stim = "{}".format(flanker_stim*5)
        elif congruent == 1 and target == "lowercase":
            flanker_stim = "{}".format(flanker_stim.lower()*5)
        elif congruent == 0 and target == "uppercase":
            flanker_stim = "{}{}{}".format(flanker_stim.lower()*2,
            flanker_stim, flanker_stim.lower()*2)
        elif congruent == 0 and target == "lowercase":
            flanker_stim = "{}{}{}".format(flanker_stim*2,
            flanker_stim.lower(), flanker_stim*2)
        else: flanker_stim = "error"
      End Routine:
        # write flanker stimuli to data
        pracSuperTrial_flanker_loop.addData('pracSuperTrial_flanker_stim',
        flanker_stim)
    CodeComponent task_isi_code_2
      Code Type = Both
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1300, 1800, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        pracSuperTrial_flanker_loop.addData('prac_SuperTrial_fl_isi', thisISI)
    TextComponent flanker_text_stim_2
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $flanker_stim
      units = deg
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    TextComponent left_reminder_text_6
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_6
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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    ImageComponent task_fixImg_2
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      saveStartStop = False
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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    KeyboardComponent task_stim_keyResp_2
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent task_accuracy_code_2
      Code Type = Auto->JS
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      End Routine:
        #iterate trial number for this supertrial
        trialNum = trialNum + 1
        #iterate trial number for this block
        trialNum_fl += 1

        if expInfo["counterbalance"] == "L":
            if task_stim_keyResp_2.keys: #if at least one response was made this trial
                if task_stim_keyResp_2.keys[0] == '1': #if the FIRST button pressed was a '1'
                    if target == 'uppercase': #if a left target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                        numCorr_fl += 1 #iterate number of correct responses for this block
                    elif target == 'lowercase': #if a right target stim was shown this trial
                        accuracy = 0 #mark this trial as an error
                elif task_stim_keyResp_2.keys[0] == '8': #if the FIRST button pressed was a '8'
                    if target == 'lowercase': #if a right target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                        numCorr_fl += 1 #iterate number of correct responses for this block
                    elif target == 'uppercase': #if a left target stim was shown this trial
                        accuracy = 0 #mark this trial as an error

            elif not task_stim_keyResp_2.keys: # if no response was made
                accuracy = 0

        elif expInfo["counterbalance"] == "R":
            if task_stim_keyResp_2.keys: #if at least one response was made this trial
                if task_stim_keyResp_2.keys[0] == '1': #if the FIRST button pressed was a '1'
                    if target == 'lowercase': #if a left target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                        numCorr_fl += 1 #iterate number of correct responses for this block
                    elif target == 'uppercase': #if a right target stim was shown this trial
                        accuracy = 0 #mark this trial as an error
                elif task_stim_keyResp_2.keys[0] == '8': #if the FIRST button pressed was a '8'
                    if target == 'uppercase': #if a right target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                        numCorr_fl += 1 #iterate number of correct responses for this block
                    elif target == 'lowercase': #if a left target stim was shown this trial
                        accuracy = 0 #mark this trial as an error

            elif not task_stim_keyResp_2.keys: # if no response was made
                accuracy = 0

        # save this trial's accuracy to our output file
        pracSuperTrial_flanker_loop.addData('prac_SuperTrial_flanker_accuracy', accuracy)
  Routine pracSuperTrial_recall
    CodeComponent wm_recall_code_3
      Code Type = Auto->JS
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      Begin Routine:
        # define underscores for typing field according to WM load
        n_underscores = 4
        reminder_text = ""

        # define allowed keys for typed response (only letters)
        wm_allowed_keys = \
        ['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j',
        'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't',
        'u', 'v', 'w', 'x', 'y', 'z', 'A', 'B', 'C', 'D',
        'E', 'F', 'G', 'H', 'I', 'J', 'K', 'L', 'M', 'N',
        'O', 'P', 'Q', 'R', 'S', 'T', 'U', 'V', 'W', 'X',
        'Y', 'Z']
      Each Frame:
        # if used lowercase letters in the response, turn into upper
        wm_recall_typedResp_3.text = \
        wm_recall_typedResp_3.text.upper()

        #wm_recall_keyResp.stop

        # limit length of input to the length of wm load in the block
        if len(wm_recall_typedResp_3.text) > n_underscores:
            wm_recall_typedResp_3.text = \
            wm_recall_typedResp_3.text[:n_underscores]
        # limit keys allowed to use to only letters
        if any(i not in wm_allowed_keys \
        for i in wm_recall_typedResp_3.text):
            wm_recall_typedResp_3.text = \
            wm_recall_typedResp_3.text[:-1]
        # restrict participant of giving a partial response (e.g. 3 letters when 4 required)
        if len(wm_recall_typedResp_3.text) < n_underscores\
        and 'space' in wm_recall_keyResp_3.getKeys():
            reminder_text = "please, provide a full response ({} letters)".format(n_underscores)
        elif len(wm_recall_typedResp_3.text) == n_underscores\
        and 'space' in wm_recall_keyResp_3.getKeys():
            continueRoutine = False
        elif len(wm_recall_typedResp_3.text) == n_underscores:
            reminder_text = ""
    TextComponent wm_recall_text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Type the letters from the Memory Game in the order they appeared







        Press SPACE when you finish
    TextboxComponent wm_recall_typedResp_3
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent wm_recall_keyResp_3
      allowedKeys [set every repeat] = "space"
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent underscores_text_3
      letterHeight = 0.045
      pos = (0, 0.01)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"\n"+n_underscores*" _"
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    CodeComponent wm_accuracy_code_3
      Code Type = Auto->JS
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      End Routine:
        ## check if typed response matches the letter sequece presented
        #OLD VERSION (BINARY)
        #if wm_recall_typedResp_3.text == ''.join(used_letters):
        #    wm_accuracy = 1
        #    numCorr_wm += 1
        #else:
        #    wm_accuracy = 0

        trialNum_wm += 1

        # check if typed response matches the letter sequece presented
        wm_response = wm_recall_typedResp_3.text
        correct_letters = used_letters.copy()
        wm_accuracy = 0
        for i in wm_response:
            if i in correct_letters:
                wm_accuracy += 1/len(wm_response)
                correct_letters.remove(i)

        numCorr_wm += wm_accuracy
        #if wm_response == ''.join(used_letters):
        #    numCorr_wm += 1
        #elif wm_accuracy >= WM_THRESH:
        #    numCorr_wm += 1

        # save this trial's wm accuracy to our output file
        pracSuperTrial_loop.addData('pracSuperTrial_wm_accuracy', wm_accuracy)

        # save this supertrial's flanker accuracy to our output file
        fl_accuracy = numCorr / trialNum
        pracSuperTrial_loop.addData('pracSuperTrial_fl_accuracy', fl_accuracy)
        # write response letters to data
        pracSuperTrial_loop.addData('pracSuperTrial_wm_response', wm_response)
        # write used letters to data (redundant)
        # pracSuperTrial_loop.addData('pracSuperTrial_used_letters',''.join(used_letters))

        # reset
        trialNum = 0
        numCorr = 0
    TextComponent full_response_reminder_text_3
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $reminder_text
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  Routine pracSuperTrial_feed
    CodeComponent prac_blockFeed_code_3
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc_wm = numCorr_wm / trialNum_wm #compute accuracy for this block
        blockAcc_fl = numCorr_fl / trialNum_fl #compute accuracy for this block

        if blockAcc_wm >= WM_THRESH and  blockAcc_fl >= FL_THRESH: #if accuracy >= 75% then say practice is complete and end practice loop to continue to main exp
            outPut = 'Well done! Now you are ready to play both games together! \n\nMemory Game accuracy: {} % \nBiG Letters Game accuracy: {} %'\
            .format(100 * round(blockAcc_wm, 2),
            100 * round(blockAcc_fl, 2)) #feedback presented
            pracSuperTrial_block_loop.finished = True #end practice loop to continue to main exp
        else: #if accuracy lower than threshold then say that practice needs to be repeated and DO NOT end practice loop, instead, allow it to repeat
            outPut = 'Please try the practice again \n\nMemory Game accuracy: {} % \nBiG Letters Game accuracy: {} %'\
            .format(100 * round(blockAcc_wm, 2),
            100 * round(blockAcc_fl, 2)) #feedback presented
            pracSuperTrial_block_loop.finished = False #DO NOT end practice loop and allow to repeat

        # write block accuracy to data
        pracSuperTrial_block_loop.addData('pracSuperTrial_blockAcc_fl', blockAcc_fl)
        pracSuperTrial_block_loop.addData('pracSuperTrial_blockAcc_wm', blockAcc_wm)

        #reset the following variables to zero before the next practice block starts
        trialNum_wm = 0
        trialNum_fl = 0
        numCorr_wm = 0
        numCorr_fl = 0
      End Routine:
        if prac_blockFeed_keyResp_3.keys[-1] == 's':
            pracSuperTrial_block_loop.finished = True #end practice loop to continue to main exp
    TextComponent prac_blockFeed_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 1.3
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    TextComponent prac_pressContinue
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
      wrapWidth = 1.3
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    KeyboardComponent prac_blockFeed_keyResp_3
      allowedKeys = 'space','s'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine task_condition
    CodeComponent task_blockReminder_code_2
      Code Type = Auto->JS
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      Begin Routine:
        #if endCondition: # skip all trials for this condition; participant will not play game.
        #    task_block_loop.finished = True
        #    continueRoutine = False

        blockCounter = blockCounter +1

        if blockCounter == 1:
            blockNumText = 'Block 1 of 12'
        elif blockCounter == 2:
            blockNumText = 'Block 2 of 12'
        elif blockCounter == 3:
            blockNumText = 'Block 3 of 12'
        elif blockCounter == 4:
            blockNumText = 'Block 4 of 12'
        elif blockCounter == 5:
            blockNumText = 'Block 5 of 12'
        elif blockCounter == 6:
            blockNumText = 'Block 6 of 12'
        elif blockCounter == 7:
            blockNumText = 'Block 7 of 12'
        elif blockCounter == 8:
            blockNumText = 'Block 8 of 12'
        elif blockCounter == 9:
            blockNumText = 'Block 9 of 12'
        elif blockCounter == 10:
            blockNumText = 'Block 10 of 12'
        elif blockCounter == 11:
            blockNumText = 'Block 11 of 12'
        elif blockCounter == 12:
            blockNumText = 'Block 12 of 12'
    TextComponent task_blockText_2
      letterHeight = 0.06
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNumText
      wrapWidth = 1.3
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    TextComponent condition_reminder_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        When the Memory Game letters are displayed, be sure to keep these in your memory. You will then recall these letters in the order that they appeared, after the BiG Letters Game.

        For the BiG Letters Game, respond as quickly as you can without making mistakes. Only respond once each time you see the letters appear in the BiG Letters Game.

        Always respond whether the MIDDLE letter is CAPITALIZED or lowercase.

        Remember not to say any of the letters out loud. To get ready, rest your thumbs on the right and left buttons.

        Press SPACE to begin
    KeyboardComponent space_end_keyResp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine supertrial_initFixation
    CodeComponent WM_LETTERS_code_3
      Code Type = Auto->JS
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      Begin Routine:
        # define a new letters list before new supertrial
        supertrial_letters = WM_LETTERS.copy()
        shuffle(supertrial_letters)

        # clean used letters list before new supertrial
        used_letters = []
        used_letters_fl = []
        shown_letters = []
    CodeComponent endTask_code_4
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(2600, 3000, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        supertrial_loop.addData('ISI_fixation', thisISI)

        #if endCondition: # skip all trials for this condition; participant will not play game.
        #    task_block_loop.finished = True
        #    continueRoutine = False
    ImageComponent initFixation_img_5
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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  Routine wm_routine
    CodeComponent we_seq_code
      Code Type = Auto->JS
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      Begin Routine:
        # choose the case of a letter randomly (0 = capitalized, 1 = lowercase)
        case_randomizer = random.randint(0, 1)

        # pick a letter to show for this trial
        shuffle(WM_LETTERS)

        if case_randomizer == 0:
            letter = [i for i in WM_LETTERS if i not in used_letters][0]
        elif case_randomizer == 1:
            letter = [i.lower() for i in WM_LETTERS if i not in used_letters][0]

        # remember the letter shown in each trial
        used_letters.append(letter.upper())
        shown_letters.append(letter)
      End Routine:
        # write used and shown letters to data
        wm_seq_loop.addData('used_letters',
        ''.join(used_letters))
        wm_seq_loop.addData('shown_letters',
        ''.join(shown_letters))
    CodeComponent wm_isi_code
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next letter to appear

        # make range from a to b in n stepsizes
        wm_ISIRange = np.linspace(400, 800, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(wm_ISIRange)
        wm_thisISI = wm_ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        wm_seq_loop.addData('wm_ISI', wm_thisISI)
    TextComponent wm_stim
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $letter
      units = deg
      wrapWidth = 1
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    ImageComponent wm_fixImg_7
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $wm_thisISI+0.5
      texture resolution = 512
      units = deg
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  Routine task_initFixation
    CodeComponent endTask_code
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1600, 2000, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        supertrial_loop.addData('ISI_fixation', thisISI)

        #if endCondition: # skip all trials for this condition; participant will not play game.
        #    task_block_loop.finished = True
        #    continueRoutine = False
    ImageComponent initFixation_img
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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    TextComponent left_reminder_text_7
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_7
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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  Routine task_stimRoutine
    CodeComponent flanker_letters_code
      Code Type = Auto->JS
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      Begin Routine:
        # leave only not-used letters for flanker
        if repeat_letters == True:
            flanker_letters = \
            [i for i in WM_LETTERS]
        elif repeat_letters == False:
            flanker_letters = \
            [i for i in WM_LETTERS if i not in used_letters]

        if repeat_letters_fl == False:
            flanker_letters = [i for i in flanker_letters\
            if i not in used_letters_fl]

        # if there is an L, we don't want in in flanker
        if "L" in flanker_letters:
            flanker_letters.remove("L")

        # shuffle again
        shuffle(flanker_letters)

        # take flanker letter and add to used flanker letters
        flanker_stim = flanker_letters[0]
        used_letters_fl.append(flanker_stim)

        # create flanker stimuli based on the congruency and case
        if congruent == 1 and target == "uppercase":
            flanker_stim = "{}".format(flanker_stim*5)
        elif congruent == 1 and target == "lowercase":
            flanker_stim = "{}".format(flanker_stim.lower()*5)
        elif congruent == 0 and target == "uppercase":
            flanker_stim = "{}{}{}".format(flanker_stim.lower()*2,
            flanker_stim, flanker_stim.lower()*2)
        elif congruent == 0 and target == "lowercase":
            flanker_stim = "{}{}{}".format(flanker_stim*2,
            flanker_stim.lower(), flanker_stim*2)
        else: flanker_stim = "error"
      End Routine:
        # write flanker stimuli to data
        task_trial_loop.addData('flanker_stim',
        flanker_stim)
    CodeComponent task_isi_code
      Code Type = Both
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # for the online version, this code component should be set to 'both' to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1300, 1800, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        task_trial_loop.addData('ISI', thisISI)
    TextComponent flanker_text_stim
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $flanker_stim
      units = deg
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    TextComponent left_reminder_text_8
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_8
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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    ImageComponent task_fixImg
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      saveStartStop = False
      size = (.24, .24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
      units = deg
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    KeyboardComponent task_stim_keyResp
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent task_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        #iterate trial number for this supertrial
        trialNum = trialNum + 1
        #iterate trial number for this block
        trialNum_fl += 1

        if expInfo["counterbalance"] == "L":
            if task_stim_keyResp.keys: #if at least one response was made this trial
                if task_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                    if target == 'uppercase': #if a left target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                        numCorr_fl += 1 #iterate number of correct responses for this block
                    elif target == 'lowercase': #if a right target stim was shown this trial
                        accuracy = 0 #mark this trial as an error
                elif task_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                    if target == 'lowercase': #if a right target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                        numCorr_fl += 1 #iterate number of correct responses for this block
                    elif target == 'uppercase': #if a left target stim was shown this trial
                        accuracy = 0 #mark this trial as an error

            elif not task_stim_keyResp.keys: # if no response was made
                accuracy = 0

        elif expInfo["counterbalance"] == "R":
            if task_stim_keyResp.keys: #if at least one response was made this trial
                if task_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                    if target == 'lowercase': #if a left target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                        numCorr_fl += 1 #iterate number of correct responses for this block
                    elif target == 'uppercase': #if a right target stim was shown this trial
                        accuracy = 0 #mark this trial as an error
                elif task_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                    if target == 'uppercase': #if a right target stim was shown this trial
                        accuracy = 1 #mark this trial as correct
                        numCorr = numCorr +1 #iterate number of correct responses for this supertrial
                        numCorr_fl += 1 #iterate number of correct responses for this block
                    elif target == 'lowercase': #if a left target stim was shown this trial
                        accuracy = 0 #mark this trial as an error

            elif not task_stim_keyResp.keys: # if no response was made
                accuracy = 0

        # save this trial's accuracy to our output file
        task_trial_loop.addData('fl_accuracy', accuracy)
    CodeComponent task_stimTrigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if task_centerImg.status == STARTED and not stimTriggerSent:
            if stimNum == 41: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x29]) #hexcode = 41; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 42:
                stimTriggerSent = True
                port.write([0x2A])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 43:
                stimTriggerSent = True
                port.write([0x2B])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 44:
                stimTriggerSent = True
                port.write([0x2C])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 51: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x33]) #hexcode = 51; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 52:
                stimTriggerSent = True
                port.write([0x34])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 53:
                stimTriggerSent = True
                port.write([0x35])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 54:
                stimTriggerSent = True
                port.write([0x36])
                time.sleep(PulseWidth)
                port.write([0x00])
    CodeComponent task_respTrigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if task_stim_keyResp.keys and len(task_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(task_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial
            if len(task_stim_keyResp.keys) < 2: #if this is  the first response
                if task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(task_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
  Routine wm_recall
    CodeComponent wm_recall_code
      Code Type = Auto->JS
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      Begin Routine:
        # define underscores for typing field according to WM load
        n_underscores = int(conditionText)
        reminder_text = ""

        # define allowed keys for typed response (only letters)
        wm_allowed_keys = \
        ['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j',
        'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't',
        'u', 'v', 'w', 'x', 'y', 'z', 'A', 'B', 'C', 'D',
        'E', 'F', 'G', 'H', 'I', 'J', 'K', 'L', 'M', 'N',
        'O', 'P', 'Q', 'R', 'S', 'T', 'U', 'V', 'W', 'X',
        'Y', 'Z']
      Each Frame:
        # if used lowercase letters in the response, turn into upper
        wm_recall_typedResp.text = \
        wm_recall_typedResp.text.upper()

        # limit length of input to the length of wm load in the block
        if len(wm_recall_typedResp.text) > n_underscores:
            wm_recall_typedResp.text = \
            wm_recall_typedResp.text[:n_underscores]
        # limit keys allowed to use to only letters
        if any(i not in wm_allowed_keys \
        for i in wm_recall_typedResp.text):
            wm_recall_typedResp.text = \
            wm_recall_typedResp.text[:-1]
        # restrict participant of giving a partial response (e.g. 3 letters when 4 required)
        if len(wm_recall_typedResp.text) < n_underscores\
        and 'space' in wm_recall_keyResp.getKeys():
            reminder_text = "please, provide a full response ({} letters)".format(n_underscores)
        elif len(wm_recall_typedResp.text) == n_underscores\
        and 'space' in wm_recall_keyResp.getKeys():
            continueRoutine = False
        elif len(wm_recall_typedResp.text) == n_underscores:
            reminder_text = ""
    TextComponent wm_recall_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Type the letters from the Memory Game in the order they appeared







        Press SPACE when you finish
    TextboxComponent wm_recall_typedResp
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent wm_recall_keyResp
      allowedKeys [set every repeat] = "space"
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent underscores_text
      letterHeight = 0.045
      pos = (0, 0.01)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"\n"+n_underscores*" _"
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    CodeComponent wm_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        ## check if typed response matches the letter sequece presented
        # OLD VERSION (BINARY)
        #if wm_recall_typedResp.text == ''.join(used_letters):
        #    wm_accuracy = 1
        #    numCorr_wm += 1
        #else:
        #    wm_accuracy = 0

        trialNum_wm += 1

        # check if typed response matches the letter sequece presented
        wm_response = wm_recall_typedResp.text
        correct_letters = used_letters.copy()
        wm_accuracy = 0
        for i in wm_response:
            if i in correct_letters:
                wm_accuracy += 1/len(wm_response)
                correct_letters.remove(i)

        numCorr_wm += wm_accuracy
        #if wm_response == ''.join(used_letters):
        #    numCorr_wm += 1
        #elif wm_accuracy >= WM_THRESH:
        #    numCorr_wm += 1

        # save this trial's wm accuracy to our output file
        supertrial_loop.addData('supertrial_wm_accuracy', wm_accuracy)

        # write response letters to data
        supertrial_loop.addData('wm_response',wm_response)
        # write used letters to data (redundant)
        # supertrial_loop.addData('used_letters',''.join(used_letters))

        # save this trial's flanker accuracy to our output file
        fl_accuracy = numCorr / trialNum
        supertrial_loop.addData('supertrial_fl_accuracy', fl_accuracy)

        # reset
        trialNum = 0
        numCorr = 0
    TextComponent full_response_reminder_text
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $reminder_text
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  Routine task_conditionComplete
    CodeComponent stimTask_code_4
      Code Type = Auto->JS
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      End Routine:
        # calculate block accuracy
        blockAcc_wm = numCorr_wm / trialNum_wm
        blockAcc_flanker = numCorr_fl / trialNum_fl

        # write block accuracy to data
        task_condition_loop.addData('supertrial_blockAcc_fl',
        blockAcc_fl)
        task_condition_loop.addData('supertrial_blockAcc_wm',
        blockAcc_wm)

        # reset
        numCorr_wm = 0
        trialNum_wm = 0
        numCorr_fl = 0
        trialNum_fl = 0
    TextComponent conditionComplete_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
      wrapWidth = 1.3
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    KeyboardComponent space_end_keyResp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_finish
    TextComponent taskComplete_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Thank you for participating!

        Please ring the bell for your experimenter.
    KeyboardComponent space_end_keyResp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructWM_seq3
    CodeComponent we_seq_code_6
      Code Type = Auto->JS
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      Begin Routine:
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      End Routine:
        # write used letters to data
        instructWM_loop4.addData('instructWM_used_letters',
        ''.join(used_letters))
        instructWM_loop4.addData('instructWM_shown_letters',
        ''.join(shown_letters))
    CodeComponent wm_isi_code_6
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next letter to appear

        # make range from a to b in n stepsizes
        wm_ISIRange = np.linspace(400, 800, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(wm_ISIRange)
        wm_thisISI = wm_ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        instructWM_loop4.addData('instructWM_isi', wm_thisISI)
    TextComponent wm_stim_6
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $letter
      units = deg
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    ImageComponent wm_fixImg_6
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $wm_thisISI+0.5
      texture resolution = 512
      units = deg
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  Routine instructWM_recall
    CodeComponent wm_recall_code_4
      Code Type = Auto->JS
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      Begin Routine:
        # define underscores for typing field according to WM load
        n_underscores = 4
        reminder_text = ""

        # define allowed keys for typed response (only letters)
        wm_allowed_keys =\
        ['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j',
        'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't',
        'u', 'v', 'w', 'x', 'y', 'z', 'A', 'B', 'C', 'D',
        'E', 'F', 'G', 'H', 'I', 'J', 'K', 'L', 'M', 'N',
        'O', 'P', 'Q', 'R', 'S', 'T', 'U', 'V', 'W', 'X',
        'Y', 'Z']
      Each Frame:
        # if used lowercase letters in the response, turn into upper
        wm_recall_typedResp_4.text = \
        wm_recall_typedResp_4.text.upper()

        # limit length of input to the length of wm load in the block
        if len(wm_recall_typedResp_4.text) > n_underscores:
            wm_recall_typedResp_4.text = \
            wm_recall_typedResp_4.text[:n_underscores]

        # limit keys allowed to use to only letters
        if any(i not in wm_allowed_keys \
        for i in wm_recall_typedResp_4.text):
            wm_recall_typedResp_4.text = \
            wm_recall_typedResp_4.text[:-1]

        # restrict participant of giving a partial response (e.g. 3 letters when 4 required)
        if len(wm_recall_typedResp_4.text) < n_underscores\
        and 'space' in wm_recall_keyResp_4.getKeys():
            reminder_text = "please, provide a full response ({} letters)".format(n_underscores)
        elif len(wm_recall_typedResp_4.text) == n_underscores\
        and 'space' in wm_recall_keyResp_4.getKeys():
            continueRoutine = False
        elif len(wm_recall_typedResp_4.text) == n_underscores:
            reminder_text = ""
    TextComponent wm_recall_text_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Type the letters from the Memory Game in the order they appeared







        Press SPACE when you finish
    TextboxComponent wm_recall_typedResp_4
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent wm_recall_keyResp_4
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent underscores_text_4
      letterHeight = 0.045
      pos = (0, 0.01)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"\n"+n_underscores*" _"
      wrapWidth = 1.3
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    CodeComponent wm_accuracy_code_4
      Code Type = Auto->JS
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      End Routine:
        # check if typed response matches the letter sequece presented
        # and generate feedback
        if wm_recall_typedResp_4.text == ''.join(used_letters[-4:]):
            wm_fb_text = "You are right! \nThe letters were {}".format(''.join(used_letters[-4:]))
        else:
            wm_fb_text = "Not quite right... \nThe letters were {} \n\nPlease try to recall the letters in the order they appeared".format(''.join(used_letters[-4:]))

        # write used and shown letters to data (redundant)
        # instructWM_loop4.addData('instructWM_used_letters',
        # ''.join(used_letters))
        # instructWM_loop4.addData('instructWM_shown_letters',
        # ''.join(shown_letters))

        # empty lists of used letters
        used_letters = []
        shown_letters = []
    TextComponent full_response_reminder_text_4
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $reminder_text
      wrapWidth = 1.3
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  Routine instructWM_fb
    TextComponent instructWM_fb_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $wm_fb_text
      wrapWidth = 1.3
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    TextComponent instructWM_cont_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Press SPACE to continue practicing
    KeyboardComponent space_end_keyResp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pracWM_seq
    CodeComponent we_seq_code_4
      Code Type = Auto->JS
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      Begin Routine:
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      End Routine:
        # write used and shown letters to data
        pracWM_seq_loop.addData('pracWM_used_letters',
        ''.join(used_letters))
        pracWM_seq_loop.addData('pracWM_shown_letters',
        ''.join(shown_letters))
    CodeComponent wm_isi_code_4
      Code Type = Auto->JS
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      Begin Routine:
        # pick the ISI for the next letter to appear

        # make range from a to b in n stepsizes
        wm_ISIRange = np.linspace(400, 800, 400)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(wm_ISIRange)
        wm_thisISI = wm_ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        pracWM_seq_loop.addData('pracWM_isi', wm_thisISI)
    TextComponent wm_stim_4
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $letter
      units = deg
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    ImageComponent wm_fixImg_4
      image [set every repeat] = img/fixationCross.png
      pos = (0, CROSS_Y)
      size = (.24, .24)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $wm_thisISI+0.5
      texture resolution = 512
      units = deg
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
  Routine instructRight
    TextComponent instructRight_text_2_L
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "L"
      wrapWidth = 1.3
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      text [set every repeat]:
        Below, the MIDDLE letter is lowercase, so you would respond by pressing the right button (8) with your right hand.







        Press the right button (8) to continue
    TextComponent instructRight_text_2_R
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "R"
      wrapWidth = 1.3
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      text [set every repeat]:
        Below, the MIDDLE letter is lowercase, so you would respond by pressing the left button (1) with your left hand.







        Press the left button (1) to continue
    TextComponent instructRight_letters2
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = hhhhh
      units = deg
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    PolygonComponent prac_highlight_circle_2
      fillColor = yellow
      lineColor = yellow
      lineWidth = 5
      opacity = 0.3
      shape = circle
      size = (0.05, 0.045)
      startVal [time (s)] = 0.0
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    KeyboardComponent insructRight_keyResp_2_L
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "L"
      store = nothing
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    KeyboardComponent insructRight_keyResp_2_R
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "R"
      store = nothing
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  Routine instructLeft
    TextComponent instructLeft_text_2_L
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "L"
      wrapWidth = 1.3
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      text [set every repeat]:
        Below, the MIDDLE letter is CAPITALIZED, so you would respond by pressing the left button (1) with your left hand.







        Press the left button (1) to continue
    TextComponent instructLeft_text_2_R
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "R"
      wrapWidth = 1.3
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      text [set every repeat]:
        Below, the MIDDLE letter is CAPITALIZED, so you would respond by pressing the right button (8) with your right hand.







        Press the right button (8) to continue
    TextComponent instructLeft_letters2
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = MMMMM
      units = deg
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    PolygonComponent prac_highlight_circle_4
      fillColor = yellow
      lineColor = yellow
      lineWidth = 5
      opacity = 0.3
      shape = circle
      size = (0.05, 0.045)
      startVal [time (s)] = 0.0
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    KeyboardComponent instructLeft_keyResp_2_L
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "L"
      store = nothing
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    KeyboardComponent instructLeft_keyResp_2_R
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "R"
      store = nothing
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  Routine instructInconRight
    TextComponent instructInconRight_text_2_L
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "L"
      wrapWidth = 1.3
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      text [set every repeat]:
        Sometimes the MIDDLE letter will have a different case from the other letters. However, your goal is to always respond to the MIDDLE letter.

        Below, the MIDDLE letter is lowercase, so you would respond by pressing the right button (8) with your right hand.





        Press the right button (8) to continue
    TextComponent instructInconRight_text_2_R
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "R"
      wrapWidth = 1.3
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      text [set every repeat]:
        Sometimes the MIDDLE letter will have a different case from the other letters. However, your goal is to always respond to the MIDDLE letter.

        Below, the MIDDLE letter is lowercase, so you would respond by pressing the left button (1) with your left hand.





        Press the left button (1) to continue
    TextComponent instructionRight_letters2
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = FFfFF
      units = deg
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    PolygonComponent prac_highlight_circle_6
      fillColor = yellow
      lineColor = yellow
      lineWidth = 5
      opacity = 0.3
      shape = circle
      size = (0.05, 0.045)
      startVal [time (s)] = 0.0
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    KeyboardComponent insructInconRight_keyResp_2_L
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "L"
      store = nothing
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    KeyboardComponent insructInconRight_keyResp_2_R
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "R"
      store = nothing
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  Routine instructInconLeft
    TextComponent instructInconLeft_text_2_L
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "L"
      wrapWidth = 1.3
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      text [set every repeat]:
        Below, the MIDDLE letter is CAPITALIZED, so you would respond by pressing the left button (1) with your left hand.







        Press the left button (1) to continue
    TextComponent instructInconLeft_text_2_R
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "R"
      wrapWidth = 1.3
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      text [set every repeat]:
        Below, the MIDDLE letter is CAPITALIZED, so you would respond by pressing the right button (8) with your right hand.







        Press the right button (8) to continue
    TextComponent instructInconLeft_letters2
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = ttTtt
      units = deg
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    PolygonComponent prac_highlight_circle_8
      fillColor = yellow
      lineColor = yellow
      lineWidth = 5
      opacity = 0.3
      shape = circle
      size = (0.05, 0.045)
      startVal [time (s)] = 0.0
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    KeyboardComponent instructInconLeft_keyResp_2_L
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "L"
      store = nothing
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    KeyboardComponent instructInconLeft_keyResp_2_R
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = expInfo["counterbalance"] == "R"
      store = nothing
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  Routine testFlankersize
    TextComponent test_degrees
      color = red
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = DDDDD
      units = deg
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    TextComponent test_height
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = DDDDD
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    TextComponent left_reminder_text_9
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_9
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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    KeyboardComponent space_end_keyResp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testFlankersize_2
    TextComponent test_degrees_2
      color = red
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = jjjjj
      units = deg
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    TextComponent test_height_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = jjjjj
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    TextComponent left_reminder_text_10
      letterHeight = 0.04
      pos = (-.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_reminder
      wrapWidth = 1.3
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    TextComponent right_reminder_text_10
      letterHeight = 0.04
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_reminder
      wrapWidth = 1.3
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    KeyboardComponent space_end_keyResp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
Flow
  Routine JS_code
  Routine setup
  Routine welcome
  Routine testFlankersize
  Routine testFlankersize_2
  Routine instructWM1
  Routine prac_initFixaion_WM
  LoopInitiator instructWM_loop loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine instructWM_seq1
  LoopTerminator instructWM_loop
  Routine instructWM3
  Routine prac_initFixaion_WM
  LoopInitiator instructWM_loop2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine instructWM_seq2
  LoopTerminator instructWM_loop2
  Routine instructWM4
  LoopInitiator instructWM_loop3 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine prac_initFixaion_WM
    LoopInitiator instructWM_loop4 loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine instructWM_seq3
    LoopTerminator instructWM_loop4
    Routine instructWM_recall
    Routine instructWM_fb
  LoopTerminator instructWM_loop3
  LoopInitiator pracWM_block_loop loopType="TrialHandler"
    loopType = random
    nReps = 99
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    LoopInitiator pracWM_trial_loop loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine prac_initFixaion_WM
      LoopInitiator pracWM_seq_loop loopType="TrialHandler"
        loopType = random
        nReps = 4
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        Routine pracWM_seq
      LoopTerminator pracWM_seq_loop
      Routine pracWM_recall
      Routine pracWM_fb
    LoopTerminator pracWM_trial_loop
    Routine pracWM_feed
  LoopTerminator pracWM_block_loop
  Routine instructMiddle
  Routine instructRight
  Routine instructLeft
  Routine instructInconRight
  Routine instructInconLeft
  Routine respond_onceInstruct
  LoopInitiator prac_block_loop loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine eeg_trigger_check
    Routine prac_blockReminders
    Routine prac_initFixation
    LoopInitiator prac_trial_loop loopType="TrialHandler"
      conditionsFile = prac_trials.xlsx
      loopType = fullRandom
      nReps = 10
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      Routine prac_stimRoutine
    LoopTerminator prac_trial_loop
    Routine prac_blockFeed
  LoopTerminator prac_block_loop
  Routine instruct_SuperTrial
  LoopInitiator pracSuperTrial_block_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 99
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    Routine reminder_SuperTrial
    LoopInitiator pracSuperTrial_loop loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine prac_initFixaion_WM
      LoopInitiator pracSuperTrial_seq_loop loopType="TrialHandler"
        loopType = random
        nReps = 4
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        Routine pracSuperTrial_seq
      LoopTerminator pracSuperTrial_seq_loop
      Routine prac_SuperTrialFixation
      LoopInitiator pracSuperTrial_flanker_loop loopType="TrialHandler"
        conditionsFile = prac_trials.xlsx
        loopType = fullRandom
        nReps = 2
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        Routine pracSuperTrial_flanker
      LoopTerminator pracSuperTrial_flanker_loop
      Routine pracSuperTrial_recall
    LoopTerminator pracSuperTrial_loop
    Routine pracSuperTrial_feed
  LoopTerminator pracSuperTrial_block_loop
  LoopInitiator task_condition_loop loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = sequential
    nReps = 6
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    conditions:
      [{'whichCondition': '4.xlsx', 'conditionText': 4.0},
      {'whichCondition': '5.xlsx', 'conditionText': 5.0}]
    Routine task_condition
    LoopInitiator supertrial_loop loopType="TrialHandler"
      loopType = random
      nReps = 6
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      Routine eeg_trigger_check
      Routine supertrial_initFixation
      LoopInitiator wm_seq_loop loopType="TrialHandler"
        loopType = random
        nReps = conditionText
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        Routine wm_routine
      LoopTerminator wm_seq_loop
      Routine task_initFixation
      LoopInitiator task_trial_loop loopType="TrialHandler"
        conditionsFile = $whichCondition
        loopType = fullRandom
        nReps = 2
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        Routine task_stimRoutine
      LoopTerminator task_trial_loop
      Routine wm_recall
    LoopTerminator supertrial_loop
    Routine task_conditionComplete
  LoopTerminator task_condition_loop
  Routine task_finish
